WorkflowBuilder(Version=2.6.0)
Bonsai.Shaders.RenderFrame => #0
Disable SubscribeSubject Borders
-> Disable PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #2
#0, #2 -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-20, Right=20, Bottom=-20, Top=20)
-> Disable IncludeWorkflow
  Path=BonVision:Environment.PerspectiveView.bonsai
  Light(X=0, Y=0, Z=0)
  FieldOfView=162.585922
  Eye(X=0, Y=0, Z=20)
  Target(X=0, Y=0, Z=-1)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=100000
-> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=2, FarClip=100, Light(X=0, Y=0, Z=0)) => #5
-> PublishSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader
      Path=meshmap_py_minus_hires.bin
      FileName=meshmap_py_minus_hires.bin
      Offset=0
      SampleRate=10000000
      ChannelCount=1001
      BufferLength=3003
      Depth=F32
      Layout=RowMajor
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
-> WorkflowOutput
#5 -> PublishSubject Draw3DQuad
#0 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)

Bonsai.Shaders.CreateWindow
  Width=1280
  Height=800
  VSync=Off
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=60
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ModelArray
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ModelArray.vert
      FragmentShader=BonVision:Shaders.Model.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=icosphere, FileName=icoSphere_070921.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=icoSphere_070921, FileName=icoSphere_070921.obj)
-> Bonsai.Shaders.TextureResources(Textures="")
-> Bonsai.Resources.LoadResources

ExternalizedMapping(Value(DisplayName=TopBorder))
-> FloatProperty(Value=10)
-> ReplaySubject Top(BufferSize=nil) => #21
ExternalizedMapping(Value(DisplayName=BottomBorder))
-> FloatProperty(Value=-10)
-> ReplaySubject Bottom(BufferSize=nil) => #24
ExternalizedMapping(Value(DisplayName=LeftBorder))
-> FloatProperty(Value=-10)
-> ReplaySubject Left(BufferSize=nil) => #27
ExternalizedMapping(Value(DisplayName=RightBorder))
-> FloatProperty(Value=10)
-> ReplaySubject Right(BufferSize=nil) => #30
ExternalizedMapping(Value(DisplayName=FrontBorder))
-> FloatProperty(Value=10)
-> ReplaySubject Front(BufferSize=nil) => #33
ExternalizedMapping(Value(DisplayName=BackBorder))
-> FloatProperty(Value=-10)
-> ReplaySubject Back(BufferSize=nil) => #36
#21, #24, #27, #30, #33, #36 -> Zip
-> ReplaySubject Borders(BufferSize=nil)

Bonsai.Shaders.UpdateFrame => #39
-> PublishSubject DrawStimuli
#39 -> PublishSubject DrawQuad

StringProperty(Value=SpeedDiscrim_TrialParams)
-> Take(Count=1) => #43
WorkflowInput Source1 => #44
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #45
ExternalizedMapping(Count) => #46
#44, #46 -> GroupWorkflow Stimuli => #47
    SubscribeSubject Random => #0
    WorkflowInput Source1 => #1
    -> Disable GroupWorkflow 64Coh => #2
        WorkflowInput Source1
        -> SphereFieldSpecification
          Trials
            SphereFieldParameters
              Duration=1
              Size=5
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-7.44674
              Coherence=46
            SphereFieldParameters
              Duration=1
              Size=5
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-7.44674
              Coherence=22
            SphereFieldParameters
              Duration=1
              Size=5
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-7.44674
              Coherence=0
            SphereFieldParameters
              Duration=1
              Size=5
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=7.44674
              Coherence=22
            SphereFieldParameters
              Duration=1
              Size=5
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=7.44674
              Coherence=46
        -> IncludeWorkflow
          Path=Extensions\EnsureSphereFieldParameters.bonsai
          DotSize=1
          Colour1=1
          Colour2=1
          numDots1=1
          numDots2=1
          dotLifeBool=0
          dotLifetime=0
          Contrast=1
          VelY=1
          VelZ=1
          Coherence=1
          Duration=1
          VelX=1
        -> WorkflowOutput
    #1 -> GroupWorkflow 32Coh => #3
        WorkflowInput Source1
        -> SphereFieldSpecification
          Trials
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-3.7233
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-3.7233
              Coherence=75
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-3.7233
              Coherence=50
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-3.7233
              Coherence=25
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-3.7233
              Coherence=0
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=3.7233
              Coherence=25
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=3.7233
              Coherence=50
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=3.7233
              Coherence=75
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=3.7233
              Coherence=100
        -> IncludeWorkflow
          Path=Extensions\EnsureSphereFieldParameters.bonsai
          DotSize=1
          Colour1=1
          Colour2=1
          numDots1=1
          numDots2=1
          dotLifeBool=0
          dotLifetime=0
          Contrast=1
          VelY=1
          VelZ=1
          Coherence=1
          Duration=1
          VelX=1
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow 64Angle => #4
        WorkflowInput Source1
        -> SphereFieldSpecification
          Trials
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=7.4467
              VelY=0
              VelZ=0
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=5.2656
              VelY=0
              VelZ=5.2656
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=2.7896
              VelY=0
              VelZ=6.9045
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=1.2931
              VelY=0
              VelZ=7.3336
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=7.4467
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-1.2931
              VelY=0
              VelZ=7.3336
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-2.7896
              VelY=0
              VelZ=6.9045
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-5.2656
              VelY=0
              VelZ=5.2656
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-7.4467
              VelY=0
              VelZ=0
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=5.2656
              VelY=0
              VelZ=-5.2656
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-5.2656
              VelY=0
              VelZ=-5.2656
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-7.4467
              Coherence=100
        -> IncludeWorkflow
          Path=Extensions\EnsureSphereFieldParameters.bonsai
          DotSize=1
          Colour1=1
          Colour2=1
          numDots1=1
          numDots2=1
          dotLifeBool=0
          dotLifetime=0
          Contrast=1
          VelY=1
          VelZ=1
          Coherence=1
          Duration=1
          VelX=1
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow 32Angle => #5
        WorkflowInput Source1
        -> SphereFieldSpecification
          Trials
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=3.7234
              VelY=0
              VelZ=0
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=2.6328
              VelY=0
              VelZ=2.6328
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=1.3948
              VelY=0
              VelZ=3.4522
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0.6465
              VelY=0
              VelZ=3.6668
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=3.7234
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-0.6465
              VelY=0
              VelZ=3.6668
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-1.3948
              VelY=0
              VelZ=3.4522
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-2.6328
              VelY=0
              VelZ=2.6328
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-3.7234
              VelY=0
              VelZ=0
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=2.6328
              VelY=0
              VelZ=-2.6328
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=-2.6328
              VelY=0
              VelZ=-2.6328
              Coherence=100
            SphereFieldParameters
              Duration=1
              Size=0
              Colour1=0
              Colour2=1
              numDots1=350
              numDots2=350
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelX=0
              VelY=0
              VelZ=-3.7234
              Coherence=100
        -> IncludeWorkflow
          Path=Extensions\EnsureSphereFieldParameters.bonsai
          DotSize=1
          Colour1=1
          Colour2=1
          numDots1=1
          numDots2=1
          dotLifeBool=0
          dotLifetime=0
          Contrast=1
          VelY=1
          VelZ=1
          Coherence=1
          Duration=1
          VelX=1
        -> WorkflowOutput
    #1 -> GroupWorkflow Blank => #6
        WorkflowInput Source1
        -> SphereFieldSpecification
          Trials
            SphereFieldParameters(Duration=1, Size=0, Colour1=0, Colour2=1, numDots1=0, numDots2=0, dotLifeBool=0, dotLifetime=20, Contrast=1, VelX=0, VelY=0, VelZ=0, Coherence=100)
        -> IncludeWorkflow
          Path=Extensions\EnsureSphereFieldParameters.bonsai
          DotSize=1
          Colour1=1
          Colour2=1
          numDots1=1
          numDots2=1
          dotLifeBool=0
          dotLifetime=0
          Contrast=1
          VelY=1
          VelZ=1
          Coherence=1
          Duration=1
          VelX=1
        -> WorkflowOutput
    #2, #4, #3, #5, #6 -> Concat => #7
    #7, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> IncludeWorkflow SpeedAndOtherInfo(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject QuadState
            -> PropertyMapping(Ambient(Selector=it), Diffuse(Selector=it), Specular(Selector=it)) => #1
            SubscribeSubject Draw3DQuad => #2
            #1, #2 -> IncludeWorkflow => #3
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=100
              TranslationY=80
              TranslationZ=70
              ScaleX=100
              ScaleY=100
              ScaleZ=100
              MeshName=cube3d
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4), front(Selector=Item5), back(Selector=Item6)) => #5
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4), front(Selector=Item5), back(Selector=Item6)) => #7
            IntProperty(Value=0)
            -> PropertyMapping(rngSeed) => #9
            IntProperty(Value=1)
            -> PropertyMapping(rngSeed) => #11
            Bonsai.Shaders.UpdateFrame => #12
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #14
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX) => #16
            #14, #16 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #19
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY) => #21
            #21, #14 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #24
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelZ) => #26
            #26, #14 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityZ) => #29
            #12 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence)
            -> PropertyMapping(Coherence) => #33
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #38
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #41
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #46
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> PropertyMapping(numDots) => #49
            #5, #49, #11 -> genRandVector3Array(numDots=350, left=-10, right=10, top=10, bottom=-10, front=10, back=-10, rngSeed=1) => #50
            #50, #19, #24, #29, #33 -> GroupWorkflow DrawMovingCircleArray-3d(Description="Draws multiple colored circles using the input array as position data.") => #51
                WorkflowInput Source1 => #0
                SubscribeSubject Draw3DStim => #1
                -> MemberSelector(Selector=ViewMatrix)
                -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0)
                -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ModelArray) => #4
                #1 -> MemberSelector(Selector=ProjectionMatrix)
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ModelArray) => #6
                #4, #6 -> Zip => #7
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4), front(Selector=Item5), back(Selector=Item6)) => #9
                ExternalizedMapping => #10
                  Ambient(Category="Model Material")
                  Diffuse(Category="Model Material")
                  Specular(Category="Model Material")
                  SpecularExponent(Category="Model Material")
                ExternalizedMapping(LocationX) => #11
                ExternalizedMapping(LocationY) => #12
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=1)
                -> PropertyMapping(X) => #15
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Y) => #18
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Z) => #21
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #24
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                -> PropertyMapping(ExtentX, ExtentY) => #27
                #7, #11, #12, #27 -> GroupWorkflow Transform => #28
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Angle) => #1
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                    ExternalizedMapping(X(DisplayName=LocationX)) => #4
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=5, Y=5, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #28, #15, #18, #21, #24 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Disable Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ModelArray) => #30
                #0, #30 -> CombineLatest => #31
                #31, #30 -> Sample
                -> MemberSelector(Selector=Item1) => #33
                ExternalizedMapping(VelocityX, VelocityY, VelocityZ, Coherence) => #34
                #34, #9, #33 -> moveVector3test(VelocityX=0, VelocityY=0, VelocityZ=-0.062055, Coherence=100, top=10, bottom=-10, left=-10, right=10, front=10, back=-10, frameRate=60) => #35
                #35, #10 -> Sink UpdateMaterial
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                    #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                    -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                    -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #4
                    ExternalizedMapping(Value(DisplayName=Diffuse)) => #5
                    ExternalizedMapping(Value(DisplayName=Specular)) => #6
                    ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #7
                    ExternalizedMapping(ShaderName) => #8
                    #4, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=ModelArray) => #9
                    #9, #5 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                    -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                    -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #12
                    #12, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=ModelArray) => #13
                    #13, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                    -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                    -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #16
                    #16, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=ModelArray) => #17
                    #17, #7 -> FloatProperty(Value=10) => #18
                    #18, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=ModelArray)
                    -> WorkflowOutput
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=ModelArray
                  MeshName=icoSphere_070921
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=3, Normalized=false, Type=Float, Divisor=1))
                -> Disable Bonsai.Shaders.DrawMesh(ShaderName=ModelArray, MeshName=cube3d)
                -> WorkflowOutput
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots2)
            -> PropertyMapping(numDots) => #54
            #7, #54, #9 -> genRandVector3Array(numDots=350, left=-10, right=10, top=10, bottom=-10, front=10, back=-10, rngSeed=0) => #55
            #55, #19, #24, #29, #33 -> GroupWorkflow DrawMovingCircleArray-3d(Description="Draws multiple colored circles using the input array as position data.") => #56
                WorkflowInput Source1 => #0
                SubscribeSubject Draw3DStim => #1
                -> MemberSelector(Selector=ViewMatrix)
                -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0)
                -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ModelArray) => #4
                #1 -> MemberSelector(Selector=ProjectionMatrix)
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ModelArray) => #6
                #4, #6 -> Zip => #7
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4), front(Selector=Item5), back(Selector=Item6)) => #9
                ExternalizedMapping => #10
                  Ambient(Category="Model Material")
                  Diffuse(Category="Model Material")
                  Specular(Category="Model Material")
                  SpecularExponent(Category="Model Material")
                ExternalizedMapping(LocationX) => #11
                ExternalizedMapping(LocationY) => #12
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=0)
                -> PropertyMapping(X) => #15
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Y) => #18
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Z) => #21
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=0)
                -> PropertyMapping(W) => #24
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                -> PropertyMapping(ExtentX, ExtentY) => #27
                #7, #11, #12, #27 -> GroupWorkflow Transform => #28
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Angle) => #1
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                    ExternalizedMapping(X(DisplayName=LocationX)) => #4
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=5, Y=5, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #28, #15, #18, #21, #24 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=0)
                -> Disable Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ModelArray) => #30
                #0, #30 -> CombineLatest => #31
                #31, #30 -> Sample
                -> MemberSelector(Selector=Item1) => #33
                ExternalizedMapping(VelocityX, VelocityY, VelocityZ, Coherence) => #34
                #34, #9, #33 -> moveVector3test(VelocityX=0, VelocityY=0, VelocityZ=-0.062055, Coherence=100, top=10, bottom=-10, left=-10, right=10, front=10, back=-10, frameRate=60) => #35
                #35, #10 -> Sink UpdateMaterial
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                    #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                    -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                    -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1) => #4
                    ExternalizedMapping(Value(DisplayName=Diffuse)) => #5
                    ExternalizedMapping(Value(DisplayName=Specular)) => #6
                    ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #7
                    ExternalizedMapping(ShaderName) => #8
                    #4, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=ModelArray) => #9
                    #9, #5 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                    -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                    -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1) => #12
                    #12, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=ModelArray) => #13
                    #13, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                    -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                    -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1) => #16
                    #16, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=ModelArray) => #17
                    #17, #7 -> FloatProperty(Value=10) => #18
                    #18, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=ModelArray)
                    -> WorkflowOutput
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=ModelArray
                  MeshName=icoSphere_070921
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=3, Normalized=false, Type=Float, Divisor=1))
                -> Disable Bonsai.Shaders.DrawMesh(ShaderName=ModelArray, MeshName=cube3d)
                -> WorkflowOutput
            #51, #56 -> Zip => #57
            Disable ExternalizedMapping(DueTime(DisplayName=RenderDelay))
            -> Disable Bonsai.Shaders.Timer(DueTime=PT0S) => #59
            #3, #59 -> Disable SubscribeWhen
            #57, #59 -> Disable SubscribeWhen => #61
            #61, #46 -> TakeUntil
            -> Last => #63
            #63, #38 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #63 -> FloatProperty(Value=0) => #67
            #67, #41 -> Merge
            -> MulticastSubject QuadState
            Disable SubscribeSubject WheelSpeed => #70
            #70, #46 -> Disable TakeUntil
            -> Disable Average
            -> Disable Condition
                WorkflowInput Source1
                -> LessThan(Operand=DoubleProperty(Value=-50))
                -> WorkflowOutput
            -> Disable FloatProperty(Value=1)
            -> Disable MulticastSubject runTrial

            Disable SubscribeSubject Draw3DStim
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=0
              TranslationZ=-25
              ScaleX=1000
              ScaleY=2500
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> Disable StringProperty(Value="Background plane (stops flickering)")

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=0
              TranslationZ=2.1
              ScaleX=300
              ScaleY=300
              ScaleZ=1
              MeshName=cube3d
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> StringProperty(Value=BackgroundPlane)
        -> Unit
        -> WorkflowOutput
    -> Concat => #10
    ExternalizedMapping(Count) => #11
    #10, #11 -> RepeatCount(Count=40) => #12
    SubscribeSubject Draw3DQuad
    -> IncludeWorkflow => #14
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=25
      TranslationY=-14
      TranslationZ=10
      ScaleX=1
      ScaleY=30
      ScaleZ=30
      MeshName=cube3d
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
    Bonsai.Shaders.Timer(DueTime=PT5S) => #15
    #12, #15 -> SubscribeWhen
    -> WorkflowOutput
    #14, #15 -> Disable TakeUntil
#47, #45 -> SubscribeWhen => #48
ExternalizedMapping(Name) => #49
#43, #49 -> GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #50
    WorkflowInput Source1
    -> BehaviorSubject SpeedAndOtherInfo

    SubscribeSubject SpeedAndOtherInfo => #2
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
    #2, #4 -> Zip => #5
    ExternalizedMapping(Name)
    -> GroupWorkflow GenerateFileName
        ExternalizedMapping(Value(DisplayName=Name))
        -> StringProperty(Value=D:\Data\Edd\MotionCoherence3D_TrialParams)
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> WorkflowOutput
    -> PropertyMapping(FileName) => #8
    ExternalizedMapping(Overwrite) => #9
    ExternalizedMapping(Suffix) => #10
    #8, #9, #10, #5 -> Bonsai.IO.CsvWriter
      FileName=D:\Data\Edd\MotionCoherence3D_TrialParams.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
      Selector=""
#50, #45 -> SubscribeWhen
SubscribeSubject runTrial
-> Accumulate => #53
GroupWorkflow FinalGrayScreen
    SubscribeSubject Draw3DQuad
    -> IncludeWorkflow => #1
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=25
      TranslationY=-14
      TranslationZ=10
      ScaleX=1
      ScaleY=30
      ScaleZ=30
      MeshName=cube3d
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
    Bonsai.Shaders.Timer(DueTime=PT10S) => #2
    #1, #2 -> TakeUntil
-> Unit => #55
#48, #55 -> Concat
-> FloatProperty(Value=1)
-> Accumulate => #58
#53, #58 -> CombineLatest
-> Divide

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=0)
    -> BehaviorSubject runTrial

GroupWorkflow EyeCamera => #62
    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=1280, Height=960), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="") => #0
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=732, Y=244, Width=156, Height=112))
    -> Bonsai.Vision.Threshold(ThresholdValue=56, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Ellipse, Iterations=1, Operation=Close)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Disable SubscribeWhen => #9
    #0 -> First
    -> Delay(DueTime=PT0.5S)
    -> Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\edd_cam_test\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Edd\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> InputMapping(Arguments)
    -> Bonsai.IO.StartProcess
      FileName=D:\Software\BONSAI\Extensions\ffmpeg.exe
      Arguments: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Edd\EyeTracking_2021-09-13_05-44-34.avi
    #0 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #18
    SubscribeSubject SyncPulse => #19
    #18, #19 -> WithLatestFrom => #20
    #0 -> MemberSelector(Selector=ElementType)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject EyeFrameCount => #24
    #9, #20, #24 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=D:\Data\Edd\MotionCoherence3D_EyeTrackingData_Session_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
GroupWorkflow ArduinoSerial => #63
    Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM6
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Disable SampleInterval(Interval=PT0.01S)
    -> Bonsai.Shaders.SampleOnRenderFrame
    -> Condition => #4
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #5
    -> MemberSelector(Selector=Item2) => #6
    -> DistinctUntilChanged
    #5 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #9
    #5 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #11
    -> Bonsai.Dsp.Difference(Order=1)
    -> Multiply(Operand=DoubleProperty(Value=0.0522)) => #13
    SubscribeSubject QuadState => #14
    SubscribeSubject EyeFrameCount => #15
    ExternalizedMapping(Value(DisplayName=Gain)) => #16
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedTime)
    -> Take(Count=1) => #19
    #13, #19 -> CombineLatest
    -> Divide => #21
    #21, #16 -> Multiply(Operand=DoubleProperty(Value=10))
    -> Condition IgnoreOverflowTicks
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        Math.Abs(it) < 50 ? 0 :
        it
    -> PublishSubject WheelSpeed
    #4 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #27
    #27, #14 -> WithLatestFrom => #28
    -> MemberSelector(Selector=Item1) => #29
    #29, #15 -> WithLatestFrom => #30
    -> MemberSelector(Selector=Item1) => #31
    #30 -> MemberSelector(Selector=Item2) => #32
    #28 -> MemberSelector(Selector=Item2) => #33
    #9, #6, #11, #32, #33, #31 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: new(Item1 as Sync, Item2 as Lick, Item3 as Wheel, Item4 as EyeFrameCount, Item5 as Photodiode, Item6 as Time)
    -> Bonsai.IO.CsvWriter
      FileName=D:\Data\Edd\MotionCoherence3D_BehaviourData.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector="Wheel,Sync,EyeFrameCount,Photodiode,Time"
Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false) => #64
#62, #64 -> SubscribeWhen
#63, #64 -> SubscribeWhen
