WorkflowBuilder(Version=2.6.3)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=800
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Triangles
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Triangles.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=dots
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\8914_generated.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=45Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\45Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=135Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\135Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid_45_6
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid_45_6.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #8
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #12
#8 -> PublishSubject DrawStimuli => #13
#12, #13 -> Sample
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=24, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader
      Path=meshmap_py_minus_hires.bin
      FileName=meshmap_py_minus_hires.bin
      Offset=0
      SampleRate=10000000
      ChannelCount=1001
      BufferLength=3003
      Depth=F32
      Layout=RowMajor
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
#8 -> Bonsai.Shaders.SampleOnUpdateFrame
-> PublishSubject draw

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION.csv, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject "Blocker X"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Blocker Rotation X"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Blocker Rotation Y"

    GroupWorkflow "Track Trial" => #9
        Bonsai.Shaders.Input.MouseCursor
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #3
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        Disable ExternalizedMapping(Count) => #8
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #10
        #7, #10 -> Add(Operand=DoubleProperty(Value=-120))
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos => #13
        SubscribeSubject Startpos
        -> Condition => #15
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #13, #15 -> SkipUntil
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=120))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Unit => #18
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=30000000, Upper=60000000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT4.2306676S, Period=PT0S)
        -> Unit => #24
        #18, #24 -> Concat
        -> Disable Last => #26
        #26, #8 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput

        GroupWorkflow "Black quad" => #29
            SubscribeSubject draw => #0
            FloatProperty(Value=0)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
            #2, #0 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.05
              ExtentY=0.05
              LocationX=0.32
              LocationY=0.22
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            -> WorkflowOutput
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT3.4095162S, Period=PT0S)
        -> Unit => #35
        #29, #35 -> TakeUntil => #36
        GroupWorkflow "White quad" => #37
            SubscribeSubject draw => #0
            FloatProperty(Value=1)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
            #2, #0 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.05
              ExtentY=0.05
              LocationX=0.32
              LocationY=0.22
              Layer=0
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            -> WorkflowOutput
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT3.6623388S, Period=PT0S)
        -> Unit => #43
        #37, #43 -> TakeUntil => #44
        #36, #44 -> Concat
        -> Repeat
    GroupWorkflow "GreyScreen Trial" => #10
        ExternalizedMapping(Value(DisplayName=Gain)) => #0
        Disable ExternalizedMapping(Count) => #1
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #3
        Bonsai.Shaders.Input.MouseCursor
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #6
        #6, #0 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #9
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #9, #3 -> Add(Operand=DoubleProperty(Value=-120)) => #10
        Timer(DueTime=PT10S, Period=PT0S) => #11
        SubscribeSubject Startpos
        -> Condition => #13
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #10, #13 -> SkipUntil
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> Unit => #16
        #16, #11 -> TakeUntil
        -> Disable Last => #18
        #18, #1 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput

        GroupWorkflow "Black quad" => #21
            SubscribeSubject draw => #0
            FloatProperty(Value=0)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
            #2, #0 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.05
              ExtentY=0.05
              LocationX=0.32
              LocationY=0.22
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            -> WorkflowOutput
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.1394154S, Period=PT0S)
        -> Unit => #27
        #21, #27 -> TakeUntil => #28
        GroupWorkflow "White quad" => #29
            SubscribeSubject draw => #0
            FloatProperty(Value=1)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
            #2, #0 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.05
              ExtentY=0.05
              LocationX=0.32
              LocationY=0.22
              Layer=0
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            -> WorkflowOutput
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT3.5333537S, Period=PT0S)
        -> Unit => #35
        #29, #35 -> TakeUntil => #36
        #28, #36 -> Concat
        -> Repeat
    #9, #10 -> Amb
    -> WorkflowOutput

    GroupWorkflow "Track 1 Textures"
        GroupWorkflow "Track 1 Main Room"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+60
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=2.75152588
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=2.75152588
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=2.75152588
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=2.75152588
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture1"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+30
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=-27.2484741
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=-27.2484741
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-27.2484741
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-27.2484741
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture2"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+50
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-7.248474
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-7.248474
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-7.248474
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-7.248474
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture3"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+70
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=12.7515259
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=12.7515259
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=12.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=12.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture4"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+90
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=32.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=32.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=32.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_45_6, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=32.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture5"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName(DisplayName=Side)) => #4
            ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
            #3, #5 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=52.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #7
            #7, #5 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=52.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #9
            #9, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=52.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
            #11, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=52.7515259
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 2 Textures"
        GroupWorkflow "Track 2 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=1002.75153
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=1002.75153
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=1002.75153
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=1002.75153
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=-1.98
                  TranslationZ=972.7515
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=972.7515
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=972.7515
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=972.7515
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=992.7515
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=992.7515
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=992.7515
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=992.7515
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=1012.75153
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=1012.75153
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=1012.75153
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=1012.75153
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=1032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=1032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=1032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=1032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture5"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=1052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=1052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            ExternalizedMapping(TextureName(DisplayName=Side)) => #9
            #8, #9 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=1052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #11
            #11, #9 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=1052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 5 Aman original Track"
        GroupWorkflow "Track 3 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=4002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=4002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=4002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4
                  TranslationY=2
                  TranslationZ=4002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=3972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.88
                  TranslationY=2
                  TranslationZ=3972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=3972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=3972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=3992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.977
                  TranslationY=2
                  TranslationZ=3992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=3992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=3992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=4012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.97
                  TranslationY=2
                  TranslationZ=4012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=4012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=4012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=4032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.97
                  TranslationY=2
                  TranslationZ=4032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=4032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=4032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    Disable GroupWorkflow "Track 4 pillar"
        GroupWorkflow "Track 4 Main Room"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3070
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 pillar 1"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3100
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3100.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2960.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3099.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2959.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 4 pillar 2"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3080
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3080.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2940.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3079.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2939.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 4 pillar 3"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3060
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3060.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2920.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3059.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2919.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 1 pillar 4"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3040
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3040.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2900.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3039.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2899.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture1"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3040
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture2"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3060
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture3"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3080
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture4"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3100
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 3 Textures"
        GroupWorkflow "Track 3 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=2002.75146
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=2002.75146
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=2002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=2002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=1972.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=1972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=1972.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=1972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=1992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=1992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=1992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=1992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=2012.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=2012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=2012.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=2012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=2032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=2032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture5"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=2052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=2052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 4 Textures"
        GroupWorkflow "Track 4 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=3002.75146
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=3002.75146
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=3002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=3002.75146
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=-1.98
                  TranslationZ=2972.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=2972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=2972.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=2972.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=2992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=2992.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=-1.98
                  TranslationZ=3012.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=3012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=3012.75146
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=3012.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=3032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=3032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=3032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=3032.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture5"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=3052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=3052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=3052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=3052.75146
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    Disable GroupWorkflow blocker
        SubscribeSubject Draw3DStim => #0
        SubscribeSubject "Blocker X"
        -> PropertyMapping(TranslationX) => #2
        SubscribeSubject "Blocker Rotation X"
        -> PropertyMapping(RotationX) => #4
        SubscribeSubject "Blocker Rotation Y"
        -> PropertyMapping(RotationY) => #6
        #0, #2, #4, #6 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-5
          TranslationY=1
          TranslationZ=-1
          ScaleX=10
          ScaleY=10
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.25, Y=0.25, Z=0.25)
          Diffuse(X=0.3, Y=0.3, Z=0.3)
          Specular(X=0.3, Y=0.3, Z=0.3)
          SpecularExponent=1
          RotationZ=0
          RotationY=180
          RotationX=180
        -> WorkflowOutput
-> Concat
-> Disable Last
-> Disable Repeat
-> ElementIndex
-> MemberSelector(Selector=Index)

Disable BehaviorSubject Startpos

Disable SelectMany Response
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> First
    -> FloatProperty(Value=1) => #2
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> First
    -> FloatProperty(Value=-1) => #5
    #5, #2 -> Amb => #6
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2) => #8
    #8, #6 -> Zip
    -> Disable Bonsai.Scripting.PythonTransform ComputeResult
      Script:
        @returns(int)
        def process(value):

          trialParam = value.Item1;
          trialResponse = value.Item2;

          if trialResponse == 0:
            output = 3; # no response

          elif trialParam > 0: # stim is right
            if trialResponse > 0:
              output = 2; #CORRECT RIGHT
            elif trialResponse < 0:
              output = 0; #wrong

          elif trialParam < 0: # stim is right
            if trialResponse < 0:
              output = 1; #correct left
            elif trialResponse > 0:
              output = 0; #wrong

          return output
    -> WorkflowOutput

Disable GroupWorkflow ArduinoSerial
    Bonsai.IO.SerialStringRead(PortName=COM6, NewLine=\n)
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #2
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject lick => #4
    -> DistinctUntilChanged
    #2 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #7
    #2 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #9
    -> Bonsai.Dsp.Difference(Order=1)
    -> Multiply(Operand=DoubleProperty(Value=-0.04)) => #11
    ExternalizedMapping(Value(DisplayName=Gain)) => #12
    #11, #12 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Condition IgnoreOverflowTicks
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    -> PublishSubject Displacement
    #7, #4, #9 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: new(Item1 as Sync, Item2 as Lick, Item3 as Wheel)
    -> Bonsai.IO.CsvWriter
      FileName=D:\Data\Stefano\Arduino\SyncWheelSignal_.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector="Wheel,Sync,Lick"

Disable GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> BehaviorSubject MousePos

    FloatProperty(Value=0)
    -> BehaviorSubject SpherePos

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=120)
    -> BehaviorSubject SphereStartPos

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

Disable Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="")
-> Disable BehaviorSubject Camera
-> Disable Timestamp
-> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
-> Disable First
-> Disable BehaviorSubject "First timestamp"

Disable GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject ScreenCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=0, Y=300, Width=1920, Height=480), FrameInterval=100)
-> Bonsai.Shaders.SampleOnRenderFrame
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Crop(RegionOfInterest(X=1895, Y=431, Width=17, Height=30))
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0)
-> LessThanOrEqual(Operand=DoubleProperty(Value=128))
-> BehaviorSubject Quadstate
