<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="WindowState" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Set Bonvision params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton ShiftKey Capital CapsLock D P T Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnRenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DurationSingleImage</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FinalGrayScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartDisplay</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Stim Duration (s)" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Stim Duration (s)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>600</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DurationSingleImage</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="p1:ExpressionTransform">
              <p1:Expression>item1*item2</p1:Expression>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="FloatProperty">
                <Value>600</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TimerExpired</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>240</ExtentX>
              <ExtentY>120</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>30</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ActiveQuads" />
        <Property Name="GridSize" />
        <Property Name="Duration" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SparseNoise Group</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Duration" />
              <Property Name="ActiveQuads" />
              <Property Name="GridSize" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Collections.SparseNoise.bonsai">
              <Duration>PT0.1S</Duration>
              <ActiveQuads>5</ActiveQuads>
              <GridSize>
                <Width>16</Width>
                <Height>8</Height>
              </GridSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Bin FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>D:\Data\Masa\SparseNoise_Log_.bin</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>TriggerSyncQuad</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>QuadState</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>RepCounter</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>DynamicVideo</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format xsi:nil="true" />
              <Selector xsi:nil="true" />
              <Name>TrialEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="1" To="14" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>StartDisplay</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="BehaviourFileName" DisplayName="TestBehaviour" />
        <Property Name="EyeFileName" />
        <Property Name="TrialParamsFileName" />
        <Property Name="PDAsyncFileName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrameEventLoggers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="BehaviourFileName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FrameEventLoggerWithTime.bonsai">
              <Name>Events</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>Timestamp</Suffix>
              <FileName>D:\Data\Masa\SparseNoise_fullscreen_WheelLog.csv</FileName>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="EyeFileName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FrameEventLoggerWithTime.bonsai">
              <Name>EyeEvents</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>Timestamp</Suffix>
              <FileName>D:\Data\Masa\SparseNoise_fullscreen_EyeLog.csv</FileName>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="TrialParamsFileName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FrameEventLoggerWithTime.bonsai">
              <Name>TrialEvents</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>Timestamp</Suffix>
              <FileName>D:\Data\Masa\SparseNoise_fullscreen_Trial.csv</FileName>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="PDAsyncFileName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FrameEventLoggerWithTime.bonsai">
              <Name>PDAsyncEvents</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>Timestamp</Suffix>
              <FileName>D:\Data\Masa\SparseNoise_fullscreen_PDAsync.csv</FileName>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Borders</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Top" Selector="Item1" />
          <Property Name="Bottom" Selector="Item2" />
          <Property Name="Left" Selector="Item3" />
          <Property Name="Right" Selector="Item4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-120</Left>
        <Right>120</Right>
        <Bottom>-30</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
        <Angle>0</Angle>
        <TextureName>DynamicVideo</TextureName>
        <ExtentX>240</ExtentX>
        <ExtentY>120</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>30</LocationY>
        <Layer>0</Layer>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ShiftX>0</ShiftX>
        <ShiftY>0</ShiftY>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawNormalizedStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.MeshMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <FileName>Tron_corrected_MeshMapping_MatlabOutput.csv</FileName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
        <ClearColor>Gray</ClearColor>
        <GammaLut>LUT_GRB.bmp</GammaLut>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Borders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TopBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Top</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BottomBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Bottom</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LeftBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-120</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Left</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RightBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>120</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Right</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Borders</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Saving Dir" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VarInIt</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Saving Dir" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\Masa\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SparseNoise_Log_.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Bin FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>42</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Photodiode</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialProgress</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MousePos</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawQuad</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-120</Left>
        <Right>120</Right>
        <Bottom>90</Bottom>
        <Top>-30</Top>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="it" />
          <Property Name="ColorB" Selector="it" />
          <Property Name="ColorG" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>30</ExtentX>
        <ExtentY>10</ExtentY>
        <LocationX>121</LocationX>
        <LocationY>87</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawQuad</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arduino</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>ArduinoSerial</io:Name>
                <io:PortName>COM4</io:PortName>
                <io:BaudRate>1000000</io:BaudRate>
                <io:Encoding>utf-8</io:Encoding>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArduinoSerial</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnRenderFrame" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 3:
    return True
  else:
    return False

</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i\t%i\t%i</Pattern>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelInput</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LeftLick</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RightLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SyncPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Photodiode</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1 as Wheel, Item2 as LickL, Item3 as LickR, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time, Item7 as SyncPulse)</scr:Expression>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format xsi:nil="true" />
              <Selector xsi:nil="true" />
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SerialToSend</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Manual reward control</Name>
              <Description>A for left D for right</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>A</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>l15</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:SerialStringWrite">
                      <io:PortName>ArduinoSerial</io:PortName>
                      <io:NewLine>\r</io:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>D</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>r10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:SerialStringWrite">
                      <io:PortName>ArduinoSerial</io:PortName>
                      <io:NewLine>\r</io:NewLine>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>AnalogOutputs</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:SerialStringRead">
                      <io:PortName>ArduinoAnalog</io:PortName>
                      <io:NewLine>\n</io:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 2:
    return True
  else:
    return False

</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Parse">
                    <Pattern>%i\t%i</Pattern>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:BehaviorSubject">
                      <Name>Photodiode</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Photodiode</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:BehaviorSubject">
                      <Name>SyncPulse</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SyncPulse</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SyncPulse</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Photodiode</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                    <Format />
                    <Selector xsi:nil="true" />
                    <Name>PDAsyncEvents</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
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                      <Name>PDAsyncEvents</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:CreateSerialPort">
                      <io:Name>ArduinoAnalog</io:Name>
                      <io:PortName>COM7</io:PortName>
                      <io:BaudRate>250000</io:BaudRate>
                      <io:Encoding>utf-8</io:Encoding>
                      <io:Parity>None</io:Parity>
                      <io:ParityReplace>63</io:ParityReplace>
                      <io:DataBits>8</io:DataBits>
                      <io:StopBits>One</io:StopBits>
                      <io:Handshake>None</io:Handshake>
                      <io:DiscardNull>false</io:DiscardNull>
                      <io:DtrEnable>true</io:DtrEnable>
                      <io:RtsEnable>false</io:RtsEnable>
                      <io:ReadBufferSize>4096</io:ReadBufferSize>
                      <io:WriteBufferSize>2048</io:WriteBufferSize>
                      <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source3" />
                  <Edge From="11" To="13" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Timestamp</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="14" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="32" Label="Source1" />
            <Edge From="8" To="32" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="32" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="31" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="30" Label="Source1" />
            <Edge From="21" To="32" Label="Source6" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="23" To="28" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="29" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="32" Label="Source7" />
            <Edge From="30" To="32" Label="Source5" />
            <Edge From="31" To="32" Label="Source4" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton B Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EyeCamera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SyncPulse</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>EyeFrameCount</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
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                <Name>EyeEvents</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>0</vid:Index>
                <vid:Format>
                  <vid:FrameSize>
                    <vid:Width>1280</vid:Width>
                    <vid:Height>960</vid:Height>
                  </vid:FrameSize>
                  <vid:AverageFrameRate>60</vid:AverageFrameRate>
                  <vid:MaximumFrameRate>60</vid:MaximumFrameRate>
                  <vid:BitCount>24</vid:BitCount>
                </vid:Format>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnRenderFrame" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SyncPulse</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ElementType</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
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                <Name>EyeEvents</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ffmpeg:VideoWriter">
                <ffmpeg:FileName>D:\Data\Masa\SparseNoise_fullscreen_EyeTracking.avi</ffmpeg:FileName>
                <ffmpeg:Suffix>Timestamp</ffmpeg:Suffix>
                <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                <ffmpeg:FrameRate>60</ffmpeg:FrameRate>
                <ffmpeg:OutputArguments>-vb 20M -vcodec mpeg4 </ffmpeg:OutputArguments>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="19" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="1" To="17" Label="Source1" />
            <Edge From="1" To="20" Label="Source1" />
            <Edge From="1" To="29" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="24" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="24" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source3" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="33" To="42" Label="Source1" />
            <Edge From="33" To="48" Label="Source1" />
            <Edge From="33" To="52" Label="Source1" />
            <Edge From="33" To="60" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="56" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="51" Label="Source1" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="56" Label="Source2" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source3" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="18" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="17" Label="Source2" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="16" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="29" Label="Source2" />
      <Edge From="28" To="29" Label="Source3" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="43" To="46" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>