WorkflowBuilder(Version=2.6.3)
Bonsai.Shaders.CreateWindow
  Width=1920
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Triangles
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Triangles.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=dots
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\8914_generated.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=45Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\45Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=135Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\135Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black L.png"
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=300)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=60, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader
      Path=meshmap_py_minus_hires.bin
      FileName=meshmap_py_minus_hires.bin
      Offset=0
      SampleRate=10000000
      ChannelCount=1001
      BufferLength=3003
      Depth=F32
      Layout=RowMajor
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION.csv, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject "Blocker X"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Blocker Rotation X"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Blocker Rotation Y"

    GroupWorkflow "Track Trial" => #9
        Disable ExternalizedMapping(Count) => #0
        Disable SubscribeSubject Startpos
        -> Disable Condition => #2
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=3000000, Upper=60000000)
        -> Disable Bonsai.Numerics.Permutation
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(DueTime)
        -> Disable Timer(DueTime=PT3.5610447S, Period=PT0S)
        -> Disable Unit => #8
        SubscribeSubject Startpos
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos => #12
        #12, #2 -> Disable SkipUntil
        -> TakeWhile
            WorkflowInput Source1
            -> Equal(Operand=FloatProperty(Value=1000))
            -> WorkflowOutput
        -> Unit => #15
        Timer(DueTime=PT2S, Period=PT0S)
        -> Unit => #17
        #15, #8, #17 -> Concat
        -> Disable Last => #19
        #19, #0 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput

        Disable Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=640, Y=300, Width=640, Height=480), FrameInterval=100)
        -> Disable Bonsai.Vision.ImageWriter(Path=track_screenshot.png, Suffix=FileCount, Overwrite=true)
    GroupWorkflow "GreyScreen Trial" => #10
        ExternalizedMapping(Value(DisplayName=Gain)) => #0
        Disable ExternalizedMapping(Count) => #1
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #3
        Bonsai.Shaders.Input.MouseCursor
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #6
        #6, #0 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #9
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #9, #3 -> Add(Operand=DoubleProperty(Value=-4119)) => #10
        Timer(DueTime=PT10M, Period=PT0S) => #11
        SubscribeSubject Startpos
        -> Condition => #13
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #10, #13 -> SkipUntil
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> Unit => #16
        #16, #11 -> TakeUntil
        -> Disable Last => #18
        #18, #1 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #9, #10 -> Amb
    -> WorkflowOutput

    Disable SubscribeSubject<System.Single> MousePos => #13
    -> Disable Condition "Track 1 reward zone Min" => #14
        WorkflowInput Source1
        -> GreaterThan(Operand=FloatProperty(Value=-10))
        -> WorkflowOutput
    #13 -> Disable Condition "Track 2 reward zone Min" => #15
        WorkflowInput Source1
        -> GreaterThanOrEqual(Operand=FloatProperty(Value=-1020))
        -> WorkflowOutput
    #13 -> Disable Condition "Track 2 reward zone Max" => #16
        WorkflowInput Source1
        -> LessThan(Operand=FloatProperty(Value=-1010))
        -> WorkflowOutput
    #15, #16 -> Disable SubscribeWhen
    -> Disable First
    -> Disable DistinctUntilChanged
    -> Disable FloatProperty(Value=2)
    -> Disable Sum
    -> Disable Bonsai.IO.SerialStringWrite(NewLine=\r\n) => #22
    Disable SubscribeSubject Camera
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #25
    #22, #25 -> Disable Zip => #26
    #13 -> Disable Condition "Track 1 reward zone Max" => #27
        WorkflowInput Source1
        -> LessThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    #14, #27 -> Disable SubscribeWhen
    -> Disable First
    -> Disable DistinctUntilChanged
    -> Disable FloatProperty(Value=1)
    -> Disable Sum
    -> Disable Bonsai.IO.SerialStringWrite(NewLine=\r\n) => #33
    Disable SubscribeSubject Camera
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #36
    Source1=#33, Source3=#36 -> Disable Zip => #37
    #26, #37 -> Disable Merge
    -> Disable Bonsai.IO.CsvWriter(FileName=Trial_timestamp\reward_timestamp.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)

    Disable SubscribeSubject<System.Single> MousePos => #40
    Disable SubscribeSubject Camera
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #43
    #40, #43 -> Disable Zip
    -> Disable Bonsai.IO.CsvWriter(FileName=location.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true)

    Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
    -> Disable First
    -> Disable FloatProperty(Value=1) => #48
    Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
    -> Disable First
    -> Disable FloatProperty(Value=0) => #51
    Disable SubscribeSubject Camera
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #54
    #51, #54 -> Disable Zip => #55
    Disable SubscribeSubject Camera
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #58
    #48, #58 -> Disable Zip => #59
    #55, #59 -> Disable Amb
    -> Disable Bonsai.IO.CsvWriter(FileName=Trial_timestamp\lick_timestamp.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)

    Disable ExternalizedMapping(waitForResponseTime) => #62
    Disable ExternalizedMapping(outputOnTime) => #63
    Disable ExternalizedMapping(timeoutTime) => #64
    Source2=#62, Source3=#63, Source4=#64 -> Disable SelectMany Response
        Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
        -> First
        -> FloatProperty(Value=1) => #2
        Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
        -> First
        -> FloatProperty(Value=-1) => #5
        WorkflowInput Source1 => #6
        -> MemberSelector(Selector=Item2) => #7
        #6 -> MemberSelector(Selector=Item3) => #8
        ExternalizedMapping(DueTime(DisplayName=waitForResponseTime))
        -> Timer(DueTime=PT3S, Period=PT0S)
        -> FloatProperty(Value=0) => #11
        #5, #2, #11 -> Amb => #12
        #7, #12, #8 -> Zip => #13
        ExternalizedMapping(outputOnTime) => #14
        ExternalizedMapping(timeoutTime) => #15
        #13, #14, #15 -> GroupWorkflow ComputeResultWorkflow
          Description:
            This grouped workflow computes the result of the trial
            (0, 1, 2 or 3) and activates arduino digital outputs
            accordingly
          Workflow
            WorkflowInput Source1
            -> Bonsai.Scripting.PythonTransform ComputeResult => #1
              Script:
                @returns(int)
                def process(value):

                  trialParam = value.Item1;
                  trialResponse = value.Item2;

                  if trialResponse == 0:
                    output = 3; # no response

                  elif trialParam > 0: # stim is right
                    if trialResponse > 0:
                      output = 2; #CORRECT RIGHT
                    elif trialResponse < 0:
                      output = 0; #wrong

                  elif trialParam < 0: # stim is right
                    if trialResponse < 0:
                      output = 1; #correct left
                    elif trialResponse > 0:
                      output = 0; #wrong

                  return output
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition IncorrectResponse => #3
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=outputOnTime)) => #4
            #3, #4 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT1S)
                -> BooleanProperty(Value=false) => #3
                #0, #3 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject IncorrectResponse => #6
            #1 -> Equal(Operand=IntProperty(Value=1))
            -> Condition LeftCorrect => #8
                WorkflowInput Source1
                -> WorkflowOutput
            #8, #4 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT1S)
                -> BooleanProperty(Value=false) => #3
                #0, #3 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject LeftCorrect => #10
            #1 -> Equal(Operand=IntProperty(Value=2))
            -> Condition RightCorrect => #12
                WorkflowInput Source1
                -> WorkflowOutput
            Source2=#4, Source2=#12 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT1S)
                -> BooleanProperty(Value=false) => #3
                #0, #3 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject RightCorrect => #14
            #1 -> Equal(Operand=IntProperty(Value=3))
            -> Condition NoResponse => #16
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=timeoutTime)) => #17
            Source2=#16, Source2=#17 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT5S)
                -> BooleanProperty(Value=false) => #3
                #0, #3 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject NoResponse => #19
            #6, #10, #14, #19 -> Merge
            -> Take(Count=2)
            -> WorkflowOutput
        -> WorkflowOutput

    SubscribeSubject MousePos => #66
    Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=0, Y=300, Width=1920, Height=480), FrameInterval=100)
    -> Disable Bonsai.Vision.VideoWriter
      FileName="Track Image Sequence.avi"
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=10
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #70
    #66, #70 -> Zip
    -> Disable Concat
    -> Disable Bonsai.IO.CsvWriter(FileName="MousePos and frame timestamp.csv", Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

    Disable Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=640, Y=300, Width=640, Height=480), FrameInterval=100)
    -> Disable Bonsai.Vision.SaveImage(FileName=track_screenshot.png, Suffix=None)

    GroupWorkflow "Track 1 Textures"
        GroupWorkflow "Track 1 Main Room"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+60
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=-4059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=-4059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=-4059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=-4059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture1"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+30
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=-4089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=-4089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-4089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-4089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture2"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+50
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-4069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-4069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-4069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-4069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture3"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+70
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=-4049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=-4049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-4049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-4049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture4"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+90
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-4029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-4029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-4029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-4029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 1 Texture5"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName(DisplayName=Side)) => #4
            ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
            #3, #5 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-4009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #7
            #7, #5 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-4009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #9
            #9, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-4009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
            #11, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-4009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 2 Textures"
        GroupWorkflow "Track 2 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=-3059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=-3059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=-3059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=-3059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=-1.98
                  TranslationZ=-3089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-3089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=-3089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-3089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-3069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-3069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-3069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-3069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-3049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-3049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=-3049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-3049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-3029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-3029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-3029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-3029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture5"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+1110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-3009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-3009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            ExternalizedMapping(TextureName(DisplayName=Side)) => #9
            #8, #9 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-3009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #11
            #11, #9 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-3009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 5 Aman original Track"
        GroupWorkflow "Track 3 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=-59
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=-59
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=-59
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4
                  TranslationY=2
                  TranslationZ=-59
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-89
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.88
                  TranslationY=2
                  TranslationZ=-89
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-89
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=-89
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-69
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.977
                  TranslationY=2
                  TranslationZ=-69
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-69
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=-69
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-49
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.97
                  TranslationY=2
                  TranslationZ=-49
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-49
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=-49
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+4090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-29
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.97
                  TranslationY=2
                  TranslationZ=-29
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-29
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.88
                  TranslationY=2
                  TranslationZ=-29
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    Disable GroupWorkflow "Track 4 pillar"
        GroupWorkflow "Track 4 Main Room"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3070
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=2930
                  ScaleX=100
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 pillar 1"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3100
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3100.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2960.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3099.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2959.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 4 pillar 2"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3080
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3080.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2940.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3079.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2939.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 4 pillar 3"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3060
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3060.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2920.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3059.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2919.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 1 pillar 4"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression(DisplayName="Z location")) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3040
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
            #6, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
            #1, #8 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3040.5
            -> PropertyMapping(TranslationZ) => #10
            #10, #0 -> GroupWorkflow Front
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2900.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput
            ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
            #12, #1 -> Bonsai.Scripting.ExpressionTransform
              Expression: it+3039.5
            -> PropertyMapping(TranslationZ) => #14
            #14, #0 -> GroupWorkflow Back
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.5
                  TranslationY=2
                  TranslationZ=2899.5
                  ScaleX=1
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=180
                  RotationX=180
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture1"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3040
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2900
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture2"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3060
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2920
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture3"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3080
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2940
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture4"
            ExternalizedMapping(TextureName) => #0
            SubscribeSubject MousePos => #1
            ExternalizedMapping(Expression) => #2
            #1, #2 -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it+3100
            -> PropertyMapping(TranslationZ) => #4
            #4, #0 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #6
            #6, #0 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=16
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ) => #8
            #8, #0 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=7.98
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #0 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-7.98
                  TranslationY=2
                  TranslationZ=2960
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 3 Textures"
        GroupWorkflow "Track 3 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=-2059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=-2059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=-2059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=-2059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=-2089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-2089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=-2089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-2089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-2069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-2069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-2069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-2069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=-1.98
                  TranslationZ=-2049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-2049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=2
                  TranslationY=5.98
                  TranslationZ=-2049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-2049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-2029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-2029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-2029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-2029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 3 Texture5"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+2110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-2009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-2009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-2009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-2009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow "Track 4 Textures"
        GroupWorkflow "Track 4 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3060
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=-1059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=-1059
                  ScaleX=120
                  ScaleY=16
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=8
                  TranslationY=2
                  TranslationZ=-1059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-8
                  TranslationY=2
                  TranslationZ=-1059
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture1"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=-1.98
                  TranslationZ=-1089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-1089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=-1089
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-1089
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture2"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-1069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-1069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-1069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-1069
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture3"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=-1.98
                  TranslationZ=-1049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-1049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-2
                  TranslationY=5.98
                  TranslationZ=-1049
                  ScaleX=8
                  ScaleY=4
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-1049
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture4"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-1029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-1029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-1029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-1029
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

        GroupWorkflow "Track 4 Texture5"
            ExternalizedMapping(Expression) => #0
            SubscribeSubject MousePos => #1
            #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: it+3110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-1009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=3.98
                  TranslationY=2
                  TranslationZ=-1009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-1009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                ExternalizedMapping(TextureName) => #2
                #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                #3, #1 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-3.98
                  TranslationY=2
                  TranslationZ=-1009
                  ScaleX=8
                  ScaleY=8
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=1, Y=1, Z=1)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                -> WorkflowOutput

    GroupWorkflow blocker
        SubscribeSubject Draw3DStim => #0
        SubscribeSubject "Blocker X"
        -> PropertyMapping(TranslationX) => #2
        SubscribeSubject "Blocker Rotation X"
        -> PropertyMapping(RotationX) => #4
        SubscribeSubject "Blocker Rotation Y"
        -> PropertyMapping(RotationY) => #6
        #0, #2, #4, #6 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=10
          TranslationY=1
          TranslationZ=-1
          ScaleX=10
          ScaleY=10
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.25, Y=0.25, Z=0.25)
          Diffuse(X=0.3, Y=0.3, Z=0.3)
          Specular(X=0.3, Y=0.3, Z=0.3)
          SpecularExponent=1
          RotationZ=0
          RotationY=0
          RotationX=0
        -> WorkflowOutput
-> Concat
-> Disable Last
-> Disable Repeat
-> ElementIndex
-> MemberSelector(Selector=Index)

Disable BehaviorSubject Startpos

Disable SelectMany Response
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> First
    -> FloatProperty(Value=1) => #2
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> First
    -> FloatProperty(Value=-1) => #5
    #5, #2 -> Amb => #6
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2) => #8
    #8, #6 -> Zip
    -> Disable Bonsai.Scripting.PythonTransform ComputeResult
      Script:
        @returns(int)
        def process(value):

          trialParam = value.Item1;
          trialResponse = value.Item2;

          if trialResponse == 0:
            output = 3; # no response

          elif trialParam > 0: # stim is right
            if trialResponse > 0:
              output = 2; #CORRECT RIGHT
            elif trialResponse < 0:
              output = 0; #wrong

          elif trialParam < 0: # stim is right
            if trialResponse < 0:
              output = 1; #correct left
            elif trialResponse > 0:
              output = 0; #wrong

          return output
    -> WorkflowOutput

Disable GroupWorkflow ArduinoSerial
    Bonsai.IO.SerialStringRead(PortName=COM6, NewLine=\n)
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #2
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject lick => #4
    -> DistinctUntilChanged
    #2 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #7
    #2 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #9
    -> Bonsai.Dsp.Difference(Order=1)
    -> Multiply(Operand=DoubleProperty(Value=-0.04)) => #11
    ExternalizedMapping(Value(DisplayName=Gain)) => #12
    #11, #12 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Condition IgnoreOverflowTicks
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    -> PublishSubject Displacement
    #7, #4, #9 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: new(Item1 as Sync, Item2 as Lick, Item3 as Wheel)
    -> Bonsai.IO.CsvWriter
      FileName=D:\Data\Stefano\Arduino\SyncWheelSignal_.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector="Wheel,Sync,Lick"

Disable GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> BehaviorSubject MousePos

    FloatProperty(Value=0)
    -> BehaviorSubject SpherePos

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=120)
    -> BehaviorSubject SphereStartPos

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

Disable Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="")
-> Disable BehaviorSubject Camera
-> Disable Timestamp
-> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
-> Disable First
-> Disable BehaviorSubject "First timestamp"
