WorkflowBuilder(Version=2.6.2)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=800
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame => #7
ExternalizedMapping(BehaviourFileName(DisplayName=TestBehaviour), EyeFileName, TrialParamsFileName, PDAsyncFileName) => #8
#7, #8 -> GroupWorkflow FrameEventLoggers
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=SpeedDiscrim_WheelLog.csv) => #2
    ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=SpeedDiscrim_EyeLog.csv) => #4
    ExternalizedMapping(FileName(DisplayName=TrialParamsFileName)) => #5
    #4, #5 -> IncludeWorkflow TrialEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=SpeedDiscrim_Trial.csv) => #6
    ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
    #6, #7 -> IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=SpeedDiscrim_PDAsync_.csv)
    -> WorkflowOutput
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform => #11
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader
      Path=meshmap_py_minus_hires.bin
      FileName=meshmap_py_minus_hires.bin
      Offset=0
      SampleRate=10000000
      ChannelCount=1001
      BufferLength=3003
      Depth=F32
      Layout=RowMajor
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
#11 -> BehaviorSubject Draw3DQuad
#7 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=0)
    -> BehaviorSubject runTrial

Bonsai.Shaders.UpdateFrame => #19
-> PublishSubject DrawStimuli
#19 -> PublishSubject DrawQuad

WorkflowInput Source1 => #22
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #23
ExternalizedMapping(Count) => #24
#22, #24 -> GroupWorkflow Stimuli => #25
    SubscribeSubject Draw3DQuad
    -> IncludeWorkflow => #1
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=60
      TranslationY=-33
      TranslationZ=-70
      ScaleX=1
      ScaleY=70
      ScaleZ=100
      MeshName=cube3d
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
    SubscribeSubject Random => #2
    WorkflowInput Source1 => #3
    -> GroupWorkflow Blank => #4
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=9.3084
              Colour1=0
              Colour2=1
              numDots1=0
              numDots2=0
              dotLifeBool=0
              dotLifetime=200
              Contrast=1
              VelocityXLeft=0
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=0
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Disable GroupWorkflow vel64 => #5
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-595.7391
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8695
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-223.4021
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-99.2898
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-37.2337
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Disable GroupWorkflow vel32 => #6
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8695
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-111.7011
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-49.6449
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-37.2337
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-18.6168
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Disable GroupWorkflow vel128 => #7
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-1191.5
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-595.7
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-446.8
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.9
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-198.6
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.5
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Disable GroupWorkflow vel32reduced => #8
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8695
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-18.6168
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Disable GroupWorkflow vel128reduced => #9
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-1191.5
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8695
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8695
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.5
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Disable GroupWorkflow vel64reduced => #10
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-595.7391
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-37.2337
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> GroupWorkflow vel64RecordLeft => #11
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-37.2337
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8696
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-595.7392
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-148.9348
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> GroupWorkflow vel32RecordLeft => #12
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-18.6168
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-37.2337
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8696
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-74.4674
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> GroupWorkflow vel128RecordLeft => #13
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-74.4674
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8696
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-148.9348
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8696
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-297.8696
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8696
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-595.7392
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8696
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=1.5
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-1191.47839
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-297.8696
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #4, #5, #6, #7, #8, #9, #10, #11, #12, #13 -> Concat => #14
    #14, #2 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> SelectMany DrawStimulus
            SubscribeSubject Draw3DStim => #0
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1.5S) => #5
            SubscribeSubject Borders => #6
            -> MemberSelector(Selector=Item1) => #7
            #6 -> MemberSelector(Selector=Item2) => #8
            #7, #8 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #11
            #6 -> MemberSelector(Selector=Item3) => #12
            #6 -> MemberSelector(Selector=Item4) => #13
            #13, #12 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #16
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #19
            SubscribeSubject Parameters => #20
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #22
            #20 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #24
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #29
            Timer(DueTime=PT0.06S, Period=PT0S) => #30
            #0, #30 -> SubscribeWhen => #31
            -> Sink BindLeft => #32
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #32, #16, #22, #11 -> IncludeWorkflow => #33
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=360
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #31 -> Sink BindRight => #34
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #34, #16, #24, #11 -> IncludeWorkflow => #35
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=360
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #33, #35 -> Zip => #36
            #36, #5 -> TakeUntil
            -> Last => #38
            #38, #29 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #38 -> FloatProperty(Value=0) => #42
            #42, #19 -> Merge
            -> MulticastSubject QuadState
            Disable SubscribeSubject WheelSpeed => #45
            #45, #5 -> Disable TakeUntil
            -> Disable Average
            -> Disable Condition
                WorkflowInput Source1
                -> LessThan(Operand=DoubleProperty(Value=-50))
                -> WorkflowOutput
            -> Disable FloatProperty(Value=1)
            -> Disable MulticastSubject runTrial

            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #52
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #54
            SubscribeSubject DrawStimuli => #55
            #54, #55 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-180, Top=180) => #56
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #59
            SubscribeSubject Parameters => #60
            -> MemberSelector(Selector=VelXLeft) => #61
            #59, #61 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #64
            #60 -> MemberSelector(Selector=VelYLeft) => #65
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #68
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight) => #70
            #70, #59 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #73
            #65, #59 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #76
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #79
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #81
            #81, #59 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #84
            #56, #52, #64, #68, #76 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots2)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.31028)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #16
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #21
                    FloatProperty(Value=0) => #22
                    ExternalizedMapping(LocationX) => #23
                    ExternalizedMapping(LocationY) => #24
                    ExternalizedMapping(Z) => #25
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #28
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #31
                    #4, #23, #24, #31 -> GroupWorkflow Transform => #32
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #32, #1, #2, #25, #28 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #34
                    ExternalizedMapping(Coherence) => #35
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #37
                    #16, #22, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #22, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(rndseed) => #42
                    #8, #10, #42 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=1) => #43
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=238) => #44
                    #43, #44 -> Zip => #45
                    #45, #34 -> CombineLatest => #46
                    #46, #34 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #39, #41, #35, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=238) => #13
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.31028)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    ExternalizedMapping(Coherence) => #36
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #38
                    #23, #24, #38 -> Merge
                    -> PropertyMapping(VelocityY) => #40
                    #18, #24, #38 -> Merge
                    -> PropertyMapping(VelocityX) => #42
                    ExternalizedMapping(rndseed) => #43
                    #9, #12, #43 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=2) => #44
                    #44, #13 -> Zip => #45
                    #45, #35 -> CombineLatest => #46
                    #46, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #42, #40, #36, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=238) => #13
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.31028)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    ExternalizedMapping(Coherence) => #36
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #38
                    #23, #24, #38 -> Merge
                    -> PropertyMapping(VelocityY) => #40
                    #18, #24, #38 -> Merge
                    -> PropertyMapping(VelocityX) => #42
                    ExternalizedMapping(rndseed) => #43
                    #9, #12, #43 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=3) => #44
                    #44, #13 -> Zip => #45
                    #45, #35 -> CombineLatest => #46
                    #46, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #42, #40, #36, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.31028)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #16
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #21
                    FloatProperty(Value=0) => #22
                    ExternalizedMapping(LocationX) => #23
                    ExternalizedMapping(LocationY) => #24
                    ExternalizedMapping(Z) => #25
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #28
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #31
                    #4, #23, #24, #31 -> GroupWorkflow Transform => #32
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #32, #1, #2, #25, #28 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #34
                    ExternalizedMapping(Coherence) => #35
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #37
                    #16, #22, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #22, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(rndseed) => #42
                    #8, #10, #42 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=4) => #43
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=238) => #44
                    #43, #44 -> Zip => #45
                    #45, #34 -> CombineLatest => #46
                    #46, #34 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #39, #41, #35, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            #56, #52, #73, #79, #84 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots2)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.24112332)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #16
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #21
                    FloatProperty(Value=0) => #22
                    ExternalizedMapping(LocationX) => #23
                    ExternalizedMapping(LocationY) => #24
                    ExternalizedMapping(Z) => #25
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #28
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #31
                    #4, #23, #24, #31 -> GroupWorkflow Transform => #32
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #32, #1, #2, #25, #28 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #34
                    ExternalizedMapping(Coherence) => #35
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #37
                    #16, #22, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #22, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(rndseed) => #42
                    #8, #10, #42 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=1) => #43
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=238) => #44
                    #43, #44 -> Zip => #45
                    #45, #34 -> CombineLatest => #46
                    #46, #34 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #39, #41, #35, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=238) => #13
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.24112332)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    ExternalizedMapping(Coherence) => #36
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #38
                    #23, #24, #38 -> Merge
                    -> PropertyMapping(VelocityY) => #40
                    #18, #24, #38 -> Merge
                    -> PropertyMapping(VelocityX) => #42
                    ExternalizedMapping(rndseed) => #43
                    #9, #12, #43 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=2) => #44
                    #44, #13 -> Zip => #45
                    #45, #35 -> CombineLatest => #46
                    #46, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #42, #40, #36, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=238) => #13
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.24112332)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    ExternalizedMapping(Coherence) => #36
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #38
                    #23, #24, #38 -> Merge
                    -> PropertyMapping(VelocityY) => #40
                    #18, #24, #38 -> Merge
                    -> PropertyMapping(VelocityX) => #42
                    ExternalizedMapping(rndseed) => #43
                    #9, #12, #43 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=3) => #44
                    #44, #13 -> Zip => #45
                    #45, #35 -> CombineLatest => #46
                    #46, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #42, #40, #36, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.24112332)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #16
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT0.5S) => #21
                    FloatProperty(Value=0) => #22
                    ExternalizedMapping(LocationX) => #23
                    ExternalizedMapping(LocationY) => #24
                    ExternalizedMapping(Z) => #25
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #28
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #31
                    #4, #23, #24, #31 -> GroupWorkflow Transform => #32
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #32, #1, #2, #25, #28 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #34
                    ExternalizedMapping(Coherence) => #35
                    FloatProperty(Value=0)
                    -> Delay(DueTime=PT1.5S) => #37
                    #16, #22, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #22, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(rndseed) => #42
                    #8, #10, #42 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=4) => #43
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=238) => #44
                    #43, #44 -> Zip => #45
                    #45, #34 -> CombineLatest => #46
                    #46, #34 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #39, #41, #35, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #50
                    #50, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject DrawQuad
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=90, Top=-30) => #92
            SubscribeSubject QuadState => #93
            -> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #94
            #92, #94 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=5.7
              LocationY=11
              Layer=-1
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            #93 -> PropertyMapping(Ambient(Selector=it), Diffuse(Selector=it), Specular(Selector=it)) => #96
            SubscribeSubject Draw3DQuad => #97
            #97, #96 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=60
              TranslationY=-33
              TranslationZ=-70
              ScaleX=1
              ScaleY=70
              ScaleZ=100
              MeshName=cube3d
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=0
              TranslationZ=-25
              ScaleX=1000
              ScaleY=2500
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> StringProperty(Value="Background plane (stops flickering)")

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=40
              TranslationZ=-7
              ScaleX=300
              ScaleY=25
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> StringProperty(Value="ceiling mask for pole")
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil) => #4
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #6
        #4, #6 -> Zip
        -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Concat => #17
    ExternalizedMapping(Count) => #18
    #17, #18 -> RepeatCount(Count=25) => #19
    Bonsai.Shaders.Timer(DueTime=PT5S) => #20
    #1, #20 -> TakeUntil
    #19, #20 -> SubscribeWhen
    -> WorkflowOutput
SubscribeSubject runTrial
-> Accumulate => #27
GroupWorkflow FinalGrayScreen
    SubscribeSubject Draw3DQuad
    -> IncludeWorkflow => #1
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=60
      TranslationY=-33
      TranslationZ=-70
      ScaleX=1
      ScaleY=70
      ScaleZ=100
      MeshName=cube3d
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
    Bonsai.Shaders.Timer(DueTime=PT10S) => #2
    #1, #2 -> TakeUntil
-> Unit => #29
#25, #29 -> Concat
-> FloatProperty(Value=1)
-> Accumulate => #32
#27, #32 -> CombineLatest
-> Divide => #34
#34, #23 -> SubscribeWhen

GroupWorkflow Borders(Description="Set values for borders of display")
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)
    -> WorkflowOutput

Disable GroupWorkflow EddArduinoSerial
    Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM3
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable ExternalizedMapping(Value(DisplayName=Gain)) => #1
    Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Disable SampleInterval(Interval=PT0.001S) => #3
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 4:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i\t%i) => #5
    -> MemberSelector(Selector=Item2)
    -> Disable DistinctUntilChanged => #7
    #5 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #9
    #5 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel
    -> Disable Bonsai.Dsp.Difference(Order=1)
    -> Disable Multiply(Operand=DoubleProperty(Value=0.04)) => #13
    #13, #1 -> Disable Multiply(Operand=DoubleProperty(Value=1))
    -> Disable Condition IgnoreOverflowTicks
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    -> Disable PublishSubject Displacement => #16
    #5 -> MemberSelector(Selector=Item4) => #17
    #3 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
    SubscribeSubject QuadState => #20
    #19, #20 -> WithLatestFrom => #21
    -> MemberSelector(Selector=Item1) => #22
    SubscribeSubject EyeFrameCount => #23
    #22, #23 -> WithLatestFrom => #24
    -> MemberSelector(Selector=Item1) => #25
    #24 -> MemberSelector(Selector=Item2) => #26
    #21 -> MemberSelector(Selector=Item2) => #27
    #16, #7, #9, #17, #27, #26, #25 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as Photodiode, Item5 as QuadState, Item6 as EyeFrameCount, Item7 as Time)
    -> Disable SampleInterval(Interval=PT0.001S)
    -> Bonsai.IO.CsvWriter
      FileName=D:\Data\Edd\BehavInputs_.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector="Wheel,Lick,Sync,Photodiode,QuadState,EyeFrameCount,Time"

Disable Bonsai.Shaders.RenderFrame
-> Disable IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-1), NearClip=0.1, FarClip=1000, Light(X=1, Y=1, Z=1))
-> Disable BehaviorSubject Draw3DStim
-> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=240, Height=120, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=25, Z=-10))
-> Disable IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=MeshMappingFiles\MeshMapCorr_MatlabOut_NEO_EH_270721.csv)
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
-> Disable WorkflowOutput

GroupWorkflow EyeCamera => #48
    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=1280, Height=960), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="") => #0
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=348, Y=248, Width=276, Height=204))
    -> Bonsai.Vision.Threshold(ThresholdValue=55, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Ellipse, Iterations=1, Operation=Close)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Disable SubscribeWhen => #9
    #0 -> First
    -> Delay(DueTime=PT0.5S)
    -> Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\edd_cam_test\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Edd\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> InputMapping(Arguments)
    -> Bonsai.IO.StartProcess
      FileName=D:\Software\Extensions\ffmpeg.exe
      Arguments: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Edd\EyeTracking_2022-04-07_04-14-15.avi
    #0 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #18
    SubscribeSubject SyncPulse => #19
    #18, #19 -> WithLatestFrom => #20
    #0 -> MemberSelector(Selector=ElementType)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject EyeFrameCount => #24
    #9, #20, #24 -> Zip
    -> MemberSelector(Selector="Item1.Centroid.X,Item1.Centroid.Y,Item1.Orientation,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area,Item2.Item1,Item2.Item2,Item3")
    -> Bonsai.Scripting.ExpressionTransform
      Expression: new(Item1 as X, Item2 as Y, Item3 as Orientation, Item4 as MajorAxisLength, Item5 as MinorAxisLength, Item6 as Area, Item7 as Time, Rest.Item1 as Sync, Rest.Item2 as EyeFrame)
    -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="X,Y,Orientation,MajorAxisLength,MinorAxisLength,Area,Time,Sync,EyeFrame")
    -> Disable Bonsai.IO.CsvWriter(FileName=D:\Data\ECT\DriftingGratings__EyeTrackingData_Session_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
GroupWorkflow ArduinoSerial_New => #49
    Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM6
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame => #2
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #4
    -> MemberSelector(Selector=Item2) => #5
    #4 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #7
    #4 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #9
    #2 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #11
    SubscribeSubject QuadState => #12
    #11, #12 -> WithLatestFrom => #13
    -> MemberSelector(Selector=Item1) => #14
    SubscribeSubject EyeFrameCount => #15
    #14, #15 -> WithLatestFrom => #16
    -> MemberSelector(Selector=Item1) => #17
    #16 -> MemberSelector(Selector=Item2) => #18
    #13 -> MemberSelector(Selector=Item2) => #19
    #9, #5, #7, #19, #18, #17 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow AnalogOutputs
        Bonsai.IO.CreateSerialPort
          Name=ArduinoAnalog
          PortName=COM14
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #1
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 2:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i) => #3
        -> MemberSelector(Selector=Item2) => #4
        #3 -> MemberSelector(Selector=Item1) => #5
        #1 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #7
        #5, #4, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")
Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false) => #50
#48, #50 -> SubscribeWhen
#49, #50 -> SubscribeWhen
