WorkflowBuilder(Version=2.7.3)
Disable Bonsai.Shaders.RenderFrame => #0
-> Disable GroupWorkflow FrameEventLoggers
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_WheelLog.csv) => #2
    ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_EyeLog.csv)
    -> Disable IncludeWorkflow saveMousePos(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_saveMousePos.csv)
    -> Disable IncludeWorkflow TrialEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=ClosedLoop_Trial.csv) => #6
    ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
    #6, #7 -> IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_PDAsync.csv)
    -> WorkflowOutput
-> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1)
-> Disable Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20)
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> Disable BehaviorSubject Draw3DStim
-> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=24, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader
      Path=meshmap_py_minus_hires.bin
      FileName=meshmap_py_minus_hires.bin
      Offset=0
      SampleRate=10000000
      ChannelCount=1001
      BufferLength=3003
      Depth=F32
      Layout=RowMajor
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
#0 -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> Disable BehaviorSubject Draw2D
#0 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.SampleOnRenderFrame => #15
-> GroupWorkflow FrameEventLoggers
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_WheelLog.csv) => #2
    ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_EyeLog.csv) => #4
    ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #5
    #4, #5 -> IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_PDAsync.csv)
    -> WorkflowOutput
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=26)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader
      Path=Tron_MeshMap_py_hres.bin
      FileName=Tron_MeshMap_py_hres.bin
      Offset=0
      SampleRate=10000000
      ChannelCount=1001
      BufferLength=3003
      Depth=F32
      Layout=RowMajor
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Disable Bonsai.Vision.Flip(Mode=Horizontal)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #8
    #1, #8 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
#15 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
#15 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> BehaviorSubject Draw2D
-> Disable IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=0, LocationY=0, Layer=0, Angle=0, ColorR=1, ColorG=1, ColorB=1, ColorA=1)

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION_t1_v1_with_active.CSV, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4,
    double.Parse(it[4]) as item5,
    double.Parse(it[5]) as item6,
    double.Parse(it[6]) as item7,
    double.Parse(it[7]) as item8
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=item2)
    -> BehaviorSubject "Reward Zone Centre Location"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Reward Zone Size"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Track ID"
    #0 -> MemberSelector(Selector=item5)
    -> BehaviorSubject "Lap ID"
    #0 -> MemberSelector(Selector=item6)
    -> BehaviorSubject "Lick Limit"
    #0 -> MemberSelector(Selector=item7)
    -> BehaviorSubject "Learning Type"
    #0 -> MemberSelector(Selector=item8)
    -> BehaviorSubject "GreyScreen Duration"

    GroupWorkflow "Track Trial" => #17
        GroupWorkflow "Check No Early Licks"
            SubscribeSubject LeftLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #4
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            SubscribeSubject RightLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            #9, #4 -> Amb
            -> BooleanProperty(Value=true)
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput

            GroupWorkflow old
                Disable SubscribeSubject LeftLick => #0
                Disable SubscribeSubject RightLick => #1
                Disable SubscribeSubject "Lick Limit"
                -> Disable PropertyMapping(Count) => #3
                #0, #3 -> Disable Skip(Count=4) => #4
                #1, #3 -> Disable Skip(Count=4) => #5
                #4, #5 -> Disable Amb
                -> Disable BooleanProperty(Value=true)
                -> Disable First
                -> Disable Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable Unit
                -> Disable BehaviorSubject AbortTrial
                -> Disable WorkflowOutput
                -> Disable WorkflowOutput

        ExternalizedMapping(Value(DisplayName=Gain)) => #1
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #3
        SubscribeSubject MousePos
        -> Condition => #5
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        SubscribeSubject WheelInput
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Dsp.Difference(Order=1)
        -> Condition IgnoreOverflowTicks => #9
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThan(Operand=DoubleProperty(Value=1000))
            -> WorkflowOutput
        #9, #1 -> Multiply(Operand=DoubleProperty(Value=0.0613))
        -> Accumulate
        -> Condition => #12
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #12, #3 -> Add(Operand=DoubleProperty(Value=-1140))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile => #16
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=140))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-1000))
            -> WorkflowOutput
        Timer(DueTime=PT1M20S, Period=PT0S) => #17
        #16, #17 -> TakeUntil => #18
        Timer(DueTime=PT1S, Period=PT0S) => #19
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 A B C D E F G Shift", SuppressRepetitions=false) => #20
        #19, #20 -> SubscribeWhen => #21
        #18, #21 -> TakeUntil => #22
        #22, #5 -> SkipUntil
        -> Unit
        -> Last
        -> WorkflowOutput
    GroupWorkflow "GreyScreen Trial" => #18
        ExternalizedMapping(Value(DisplayName=Gain)) => #0
        Disable ExternalizedMapping(Count) => #1
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #3
        SubscribeSubject Startpos
        -> Condition => #5
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        SubscribeSubject WheelInput
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Dsp.Difference(Order=1) => #8
        #8, #0 -> Multiply(Operand=DoubleProperty(Value=0))
        -> Accumulate
        -> Condition => #11
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #11, #3 -> Add(Operand=DoubleProperty(Value=-1140)) => #12
        SubscribeSubject "GreyScreen Duration"
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S, Period=PT0S) => #15
        #12, #15 -> TakeUntil => #16
        #16, #5 -> SkipUntil
        -> Disable SubscribeWhen
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> Unit
        -> Last => #21
        #21, #1 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #17, #18 -> Amb => #19
    SubscribeSubject AbortTrial => #20
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=40000000, Upper=60000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.6228097S, Period=PT0S)
    -> Unit => #26
    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Take(Count=1) => #29
    #20, #29 -> TakeUntil => #30
    #19, #30 -> Merge
    -> First => #32
    #32, #26 -> Concat
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> Last
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        GroupWorkflow Archive
            Disable GroupWorkflow blocker
                SubscribeSubject Draw3DStim => #0
                SubscribeSubject "Blocker X"
                -> PropertyMapping(TranslationX) => #2
                SubscribeSubject "Blocker Rotation X"
                -> PropertyMapping(RotationX) => #4
                SubscribeSubject "Blocker Rotation Y"
                -> PropertyMapping(RotationY) => #6
                #0, #2, #4, #6 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=5
                  TranslationY=1
                  TranslationZ=-1
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.25, Y=0.25, Z=0.25)
                  Diffuse(X=0.3, Y=0.3, Z=0.3)
                  Specular(X=0.3, Y=0.3, Z=0.3)
                  SpecularExponent=1
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput

            Disable GroupWorkflow "Track 1 Textures"
                GroupWorkflow "Track 1 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+60
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture1"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+30
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture2"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+50
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture3"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+70
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture4"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+90
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #4
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
                    #3, #5 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #7
                    #7, #5 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #9
                    #9, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Textures"
                GroupWorkflow "Track 2 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 5 Aman original Track"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.977
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 pillar"
                GroupWorkflow "Track 4 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 1"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3100.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2960.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3099.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2959.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 2"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3080.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2940.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3079.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2939.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 3"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3060.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2920.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3059.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2919.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 1 pillar 4"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3040.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2900.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3039.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2899.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 3 Textures"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 Textures"
                GroupWorkflow "Track 4 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow Backup
                Disable GroupWorkflow "Track 1 Textures"
                    GroupWorkflow "Track 1 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+60
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture1"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+30
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture2"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+50
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture3"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+70
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture4"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+90
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture5"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #4
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
                        #3, #5 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #7
                        #7, #5 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #9
                        #9, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                        #11, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 2 Textures"
                    GroupWorkflow "Track 2 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 5 Aman original Track"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-4
                              TranslationY=2
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.977
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.97
                              TranslationY=2
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.97
                              TranslationY=2
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 pillar"
                    GroupWorkflow "Track 4 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 1"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3100.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2960.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3099.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2959.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 2"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3080.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2940.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3079.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2939.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 3"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3060.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2920.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3059.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2919.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 pillar 4"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3040.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2900.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3039.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2899.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 3 Textures"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 Textures"
                    GroupWorkflow "Track 4 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

        GroupWorkflow "Track 2 Right Textures" => #1
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.99
                      TranslationZ=70.1318
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.99
                      TranslationZ=70.1318
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=70.1318
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=-1060
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture1"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=30.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=30.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=30.1318
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1090
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture2"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=50.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=50.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=50.1318
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1070
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture3"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=70.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=70.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=70.1318
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1050
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture4"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=90.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=90.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=90.1318
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1030
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName=Side)) => #4
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
                #3, #5 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=110.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #7
                #7, #5 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=110.1318
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #9
                #9, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=110.1318
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #4 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1010
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
        SubscribeSubject Startpos => #2
        -> LessThan(Operand=DoubleProperty(Value=0)) => #3
        #2 -> GreaterThan(Operand=DoubleProperty(Value=-200)) => #4
        #3, #4 -> Zip
        -> Condition => #6
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #1, #6 -> SubscribeWhen

        SubscribeSubject Startpos => #8
        -> LessThan(Operand=DoubleProperty(Value=-1000)) => #9
        #8 -> GreaterThan(Operand=DoubleProperty(Value=-1200)) => #10
        #9, #10 -> Zip
        -> Condition => #12
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        GroupWorkflow "Track 1 Left Textures" => #13
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.99
                      TranslationZ=70.43829
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.99
                      TranslationZ=70.43829
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=-60
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=70.43829
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=30.4382935
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=30.4382935
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=30.4382935
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=50.4382935
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-70
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=50.4382935
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=50.4382935
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=70.43829
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-50
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=70.43829
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=70.43829
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=90.43829
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-30
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=90.43829
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=90.43829
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=110.438293
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=110.438293
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-10
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=110.438293
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
        #13, #12 -> SubscribeWhen

    GroupWorkflow "Control and Give Reward"
        GroupWorkflow "Generate Reward Serial String"
            SubscribeSubject RightCorrect
            -> Skip(Count=1) => #1
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> FloatProperty(Value=40) => #3
            #1 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=20))
                -> WorkflowOutput
            -> FloatProperty(Value=120) => #5
            #3, #5 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject RightValveOpenTime

            SubscribeSubject LeftCorrect
            -> Skip(Count=1) => #10
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=40) => #12
            #10 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> FloatProperty(Value=120) => #14
            #12, #14 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject LeftValveOpenTime

            StringProperty(Value=l) => #18
            SubscribeSubject LeftValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=60)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
              Expression: it.ToString()
            #18, #22 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject LeftRewardString

            StringProperty(Value=r) => #26
            SubscribeSubject RightValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=40)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression: it.ToString()
            #26, #30 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject RightRewardString

        SubscribeSubject LeftCorrect
        -> Disable Take(Count=1) => #2
        SubscribeSubject LeftRewardString
        -> PropertyMapping(Value) => #4
        #2, #4 -> StringProperty(Value=l60) => #5
        Disable SubscribeSubject "Learning Type" => #6
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #8
        #6 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #10
        #8, #10 -> Disable Amb
        -> Disable PropertyMapping(Count) => #12
        #5, #12 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        SubscribeSubject RightCorrect
        -> Disable Take(Count=1) => #17
        SubscribeSubject RightRewardString
        -> PropertyMapping(Value) => #19
        #17, #19 -> StringProperty(Value=r40) => #20
        Disable SubscribeSubject "Learning Type" => #21
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #23
        #21 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #25
        #23, #25 -> Disable Amb
        -> Disable PropertyMapping(Count) => #27
        #20, #27 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        StringProperty(Value="")
        -> BehaviorSubject SerialToSend
        -> Disable Skip(Count=1)
        -> Disable Take(Count=1)
        -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

        SubscribeSubject SerialToSend
        -> Skip(Count=1)
        -> Take(Count=1)
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r) => #39
        SubscribeSubject "Response Value"
        -> PropertyMapping(Value) => #41
        #39, #41 -> IntProperty(Value=1)
        -> Disable TakeUntil
        -> MulticastSubject "Correct Lap"

        SubscribeSubject LeftValveOpenTime => #45
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=40))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #47
        #45 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=120))
            -> WorkflowOutput
        -> IntProperty(Value=10) => #49
        SubscribeSubject RightValveOpenTime => #50
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=40))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #52
        #50 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=120))
            -> WorkflowOutput
        -> IntProperty(Value=20) => #54
        #52, #54, #47, #49 -> Amb
        -> BehaviorSubject "Response Value"

    GroupWorkflow "Get Licks"
        Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
        -> Disable Unit => #1
        Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
        -> Disable Unit => #3
        Disable Unit => #4
        #1, #4 -> Disable Merge
        -> Disable BehaviorSubject RightLick
        #3, #4 -> Disable Merge
        -> Disable BehaviorSubject LeftLick

        GroupWorkflow "Check For Recent Licks"
            ExternalizedMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.05S)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #3
            IntProperty(Value=0) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            SubscribeSubject RightLick
            -> IntProperty(Value=2) => #8
            #4, #6, #8 -> Merge
            -> Skip(Count=3)
            -> BehaviorSubject LickState
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #13
            #3, #13 -> CombineLatest
            -> Subtract
            -> Divide(Operand=DoubleProperty(Value=1000))
            -> BehaviorSubject TimeSinceLastLick

    GroupWorkflow "Performance Tracking"
        GroupWorkflow "Active Learning" => #0
            SubscribeSubject LickState
            -> PropertyMapping(Value) => #1
            Source2=#1 -> IntProperty(Value=1)
            -> Skip(Count=1)
            -> Disable First => #4
            GroupWorkflow "Reward zone info"
                SubscribeSubject InsideZone => #0
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #3
                #1, #3 -> IntProperty(Value=1) => #4
                #0 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #6
                #4, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Value) => #6
            #4, #6 -> Equal(Operand=IntProperty(Value=0)) => #7
            -> Condition Correct => #8
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=10)
            -> MulticastSubject LeftCorrect
            #8 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=20)
            -> MulticastSubject RightCorrect
            #7 -> Condition Incorrect => #17
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Incorrect Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject LeftIncorrect
            #17 -> IntProperty(Value=2)
            -> Condition "Incorrect Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject RightIncorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Active" => #2
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #0, #2 -> SubscribeWhen

        GroupWorkflow "Passive Learning" => #4
            SubscribeSubject Entry => #0
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject LeftCorrect
            #0 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject RightCorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Passive" => #6
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen

        GroupWorkflow "Track Reward Zone"
            SubscribeSubject<System.Single> MousePos => #0
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #2
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #4
            SubscribeSubject "Reward Zone Centre Location" => #5
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1040) => #7
            #7, #4 -> Add(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #9
            #5 -> PropertyMapping(Value)
            -> IntProperty(Value=-1040) => #11
            #11, #2 -> Subtract(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #13
            #0, #13 -> GreaterThan(Operand=FloatProperty(Value=-1045)) => #14
            #9, #0 -> LessThan(Operand=FloatProperty(Value=-1035)) => #15
            #14, #15 -> Zip
            -> LogicalAnd => #17
            -> BehaviorSubject InsideZone
            -> WorkflowOutput
            #17 -> Disable DistinctUntilChanged
            -> Disable Skip(Count=1) => #21
            -> Disable Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=1)
            -> Disable BehaviorSubject Entry
            #21 -> Disable BitwiseNot
            -> Disable Condition Exit
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable BehaviorSubject Exit
            SubscribeSubject "Reward Zone Centre Location"
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1040)
            -> PropertyMapping(Value) => #32
            #0, #32 -> GreaterThan(Operand=FloatProperty(Value=-1040))
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> BehaviorSubject Entry

    Disable GroupWorkflow "Performance Calculation"
        SubscribeSubject LeftCorrect
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate => #3
        SubscribeSubject RightCorrect
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> PropertyMapping(Value) => #8
        #3, #8 -> Add(Operand=IntProperty(Value=6)) => #9
        Disable SubscribeSubject "End of lap" => #10
        SubscribeSubject "Track ID"
        -> PropertyMapping(Value) => #12
        #10, #12 -> IntProperty(Value=2)
        -> TakeWhile "If Track 1 or 2"
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> PropertyMapping(Value) => #17
        #9, #17 -> Divide(Operand=IntProperty(Value=2)) => #18
        Bonsai.Shaders.UpdateFrame
        -> Timestamp => #20
        #18, #20 -> Zip
        -> WorkflowOutput

    GroupWorkflow "Variable to main workflow"
        SubscribeSubject "Track ID"
        -> MulticastSubject "Track ID (main)"

        SubscribeSubject LickState
        -> MulticastSubject "LickState (main)"

        SubscribeSubject MousePos
        -> MulticastSubject "MousePos (main)"

        SubscribeSubject MousePos
        -> MulticastSubject "MousePos (main)"

        SubscribeSubject "Correct Lap"
        -> MulticastSubject "Correct Lap (main)"

        SubscribeSubject "Learning Type"
        -> MulticastSubject "Learning Type (main)"
-> Concat
-> BehaviorSubject "End of lap" => #32
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #33
#32, #33 -> SubscribeWhen

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Photodiode

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    BooleanProperty(Value=false)
    -> BehaviorSubject InsideZone

    IntProperty(Value=1)
    -> BehaviorSubject "Lap ID"

    Disable IntProperty(Value=1)
    -> Disable BehaviorSubject "Lick Limit"

    IntProperty(Value=0)
    -> BehaviorSubject "Track ID (main)"

    IntProperty(Value=0)
    -> BehaviorSubject "LickState (main)"

    GroupWorkflow TrialOutcomes
        IntProperty(Value=0) => #0
        -> BehaviorSubject LeftCorrect
        #0 -> BehaviorSubject RightCorrect
        #0 -> BehaviorSubject NoResponse
        #0 -> BehaviorSubject LeftIncorrect
        #0 -> BehaviorSubject RightIncorrect
        #0 -> BehaviorSubject "Correct Lap"

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    FloatProperty(Value=200)
    -> BehaviorSubject "MousePos (main)"

    IntProperty(Value=0) => #27
    -> BehaviorSubject "Lap count Track 1"
    #27 -> BehaviorSubject "Lap count Track 2"

    FloatProperty(Value=0) => #30
    -> BehaviorSubject "Track 1 Performance"
    #30 -> BehaviorSubject "Track 2 Performance"

    IntProperty(Value=0)
    -> BehaviorSubject "Correct Lap (main)"

    FloatProperty(Value=0)
    -> BehaviorSubject "Total reward volume"

    IntProperty(Value=0)
    -> BehaviorSubject Timestamp

    IntProperty(Value=0)
    -> BehaviorSubject "Manual reward"

    IntProperty(Value=0)
    -> BehaviorSubject "Learning Type (main)"

Disable GroupWorkflow "Performance Calculation"
    SubscribeSubject LeftCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=10))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate => #3
    SubscribeSubject RightCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=20))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #8
    #3, #8 -> Add(Operand=IntProperty(Value=1)) => #9
    SubscribeSubject "End of lap" => #10
    SubscribeSubject "Track ID"
    -> PropertyMapping(Value) => #12
    #10, #12 -> IntProperty(Value=1)
    -> TakeWhile "If Track 1 or 2"
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #17
    #9, #17 -> Divide(Operand=IntProperty(Value=1)) => #18
    Bonsai.Shaders.UpdateFrame
    -> Timestamp => #20
    #18, #20 -> Zip
    -> WorkflowOutput

    SubscribeSubject RightCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=20))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate => #26
    SubscribeSubject "End of lap" => #27
    SubscribeSubject "Track ID"
    -> PropertyMapping(Value) => #29
    #27, #29 -> IntProperty(Value=1)
    -> TakeWhile "If Track 2"
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> Disable GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #34
    #34, #26 -> Divide(Operand=IntProperty(Value=1))

SubscribeSubject "Correct Lap" => #37
-> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #40
SubscribeSubject "Track ID (main)" => #41
-> Condition "If Track 1"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 1" => #45
#40, #45 -> CombineLatest
-> Divide
-> MulticastSubject "Track 1 Performance"
#37 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=20))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #51
#41 -> Condition "If Track 2"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 2" => #55
#51, #55 -> CombineLatest
-> Divide
-> MulticastSubject "Track 2 Performance"

SubscribeSubject "Correct Lap" => #59
-> Condition "If Track 1 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #61
#59 -> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #63
#59 -> Condition "If Track 2 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #65
#59 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #67
#61, #63, #65, #67 -> Merge
-> Accumulate
-> MulticastSubject "Total reward volume"

GroupWorkflow Arduino => #71
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame => #3
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #5
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput => #7
    #5 -> MemberSelector(Selector=Item2) => #8
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3) => #11
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #3 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #15
    SubscribeSubject "MousePos (main)" => #16
    SubscribeSubject QuadState => #17
    #15, #17 -> WithLatestFrom => #18
    -> MemberSelector(Selector=Item1) => #19
    SubscribeSubject EyeFrameCount => #20
    #19, #20 -> WithLatestFrom => #21
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject Timestamp => #23
    #23, #16 -> WithLatestFrom => #24
    -> MemberSelector(Selector=Item2) => #25
    #24 -> MemberSelector(Selector=Item1) => #26
    SubscribeSubject SyncPulse => #27
    #26, #27 -> WithLatestFrom => #28
    -> MemberSelector(Selector=Item1) => #29
    SubscribeSubject Photodiode => #30
    #29, #30 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #32
    #28 -> MemberSelector(Selector=Item2) => #33
    #25, #33, #32 -> Zip => #34
    #21 -> MemberSelector(Selector=Item2) => #35
    #18 -> MemberSelector(Selector=Item2) => #36
    #7, #8, #11, #36, #35, #23, #34 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as LickL, Item3 as LickR, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time, Item7 as Position)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    Disable SubscribeSubject SerialToSend
    -> Disable Skip(Count=1)
    -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate

    GroupWorkflow "Manual reward control"(Description="A for left D for right")
        Disable ExternalizedMapping(FileName(DisplayName="Manual reward FileName"))
        -> Disable IncludeWorkflow "Manual reward Left"(Path=BonVision:Logging.EventLogger.bonsai, FileName=D:\Data\Masa\Masa2tracks_Manual_reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
        -> StringProperty(Value=l30)
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
        -> IntProperty(Value=1)
        -> MulticastSubject "Manual reward"

        Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
        -> StringProperty(Value=r30)
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
        -> IntProperty(Value=2)
        -> MulticastSubject "Manual reward"

    GroupWorkflow AnalogOutputs
        Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #0
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 2:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i) => #2
        -> MemberSelector(Selector=Item1)
        -> Disable BehaviorSubject Photodiode
        -> MulticastSubject Photodiode => #5
        #2 -> MemberSelector(Selector=Item2)
        -> Disable BehaviorSubject SyncPulse
        -> MulticastSubject SyncPulse => #8
        #5, #8 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> Disable IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #13
        SubscribeSubject SyncPulse => #14
        SubscribeSubject Photodiode => #15
        #15, #14, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as P, Item2 as S, Item3 as T)
        -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)

        Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> Disable IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")

        Bonsai.IO.CreateSerialPort
          Name=ArduinoAnalog
          PortName=COM7
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

    Disable SubscribeSubject Timestamp
Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false) => #72
#71, #72 -> SubscribeWhen
GroupWorkflow EyeCamera => #74
    Disable SubscribeSubject SyncPulse => #0
    Disable Bonsai.Vision.CameraCapture => #1
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=Brightness, Value=100)
        CapturePropertyAssignment(Property=Contrast, Value=50)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Fps, Value=60)
        CapturePropertyAssignment(Property=FrameWidth, Value=1280)
        CapturePropertyAssignment(Property=FrameHeight, Value=960)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=100)
    -> Disable First
    -> Disable Delay(DueTime=PT0.5S)
    -> Disable Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\edd_cam_test\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 2560x1440 -r 30 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 C:\Users\lab\Desktop\data\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Disable InputMapping(Arguments)
    -> Disable Bonsai.IO.StartProcess
      FileName=Extensions\ffmpeg.exe
      Arguments: -f rawvideo -vcodec rawvideo -y -s 2560x1440 -r 30 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 C:\Users\lab\Desktop\data\EyeTracking_2023-06-05_12-17-53.avi
    #1 -> Disable Bonsai.Vision.Grayscale
    -> Disable Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=1456, Y=6, Width=128, Height=60))
    -> Disable Bonsai.Vision.Threshold(ThresholdValue=77, MaxValue=255, ThresholdType=BinaryInv)
    -> Disable Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Ellipse, Iterations=1, Operation=Close)
    -> Disable Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Disable Bonsai.Vision.BinaryRegionAnalysis
    -> Disable Bonsai.Vision.LargestBinaryRegion => #16
    #1 -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #18
    #18, #0 -> Disable WithLatestFrom => #19
    #1 -> Disable MemberSelector(Selector=ElementType)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate
    -> Disable MulticastSubject EyeFrameCount => #23
    #16, #19, #23 -> Disable Zip
    -> Disable MemberSelector(Selector="Item1.Centroid.X,Item1.Centroid.Y,Item1.Orientation,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area,Item2.Item1,Item2.Item2,Item3")
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as X, Item2 as Y, Item3 as Orientation, Item4 as MajorAxisLength, Item5 as MinorAxisLength, Item6 as Area, Item7 as Time, Rest.Item1 as Sync, Rest.Item2 as EyeFrame)
    -> Disable IncludeWorkflow EyeEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="X,Y,Orientation,MajorAxisLength,MinorAxisLength,Area,Time,Sync,EyeFrame")
    -> Disable Bonsai.IO.CsvWriter(FileName=D:\Data\ECT\DriftingGratings__EyeTrackingData_Session_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #1 -> Disable Bonsai.Vision.VideoWriter
      FileName=test_data\Masa2tracks_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Masa\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp

    Disable Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=1280, Height=960), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="")

    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=1280, Height=960), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="") => #32
    -> Bonsai.Shaders.SampleOnRenderFrame => #33
    -> Disable Bonsai.Vision.Grayscale
    -> Disable Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=276, Y=320, Width=188, Height=196))
    -> Disable Bonsai.Vision.Threshold(ThresholdValue=77, MaxValue=255, ThresholdType=BinaryInv)
    -> Disable Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Ellipse, Iterations=1, Operation=Close)
    -> Disable Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Disable Bonsai.Vision.BinaryRegionAnalysis
    -> Disable Bonsai.Vision.LargestBinaryRegion => #41
    #33 -> Disable First
    -> Disable Delay(DueTime=PT0.5S)
    -> Disable Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Masa\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Disable InputMapping(Arguments)
    -> Disable Bonsai.IO.StartProcess
      FileName=D:\Software\Extensions\ffmpeg.exe
      Arguments: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Masa\EyeTracking_2023-03-08_02-52-59.avi
    #33 -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #49
    Disable SubscribeSubject SyncPulse => #50
    #49, #50 -> Disable WithLatestFrom => #51
    #33 -> MemberSelector(Selector=ElementType)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject EyeFrameCount => #55
    #41, #51, #55 -> Disable Zip
    -> Disable MemberSelector(Selector="Item1.Centroid.X,Item1.Centroid.Y,Item1.Orientation,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area,Item2.Item1,Item2.Item2,Item3")
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as X, Item2 as Y, Item3 as Orientation, Item4 as MajorAxisLength, Item5 as MinorAxisLength, Item6 as Area, Item7 as Time, Rest.Item1 as Sync, Rest.Item2 as EyeFrame)
    -> Disable IncludeWorkflow EyeEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="X,Y,Orientation,MajorAxisLength,MinorAxisLength,Area,Time,Sync,EyeFrame")
    #33 -> Disable Bonsai.Vision.VideoWriter
      FileName=D:\Data\Masa\Masa2tracks_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #33 -> Bonsai.FFmpeg.VideoWriter(FileName=D:\Data\Masa\Masa2tracks_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=60, OutputArguments="-vb 20M -vcodec mpeg4")
    #33 -> TimeInterval
    #32 -> TimeInterval
#74, #72 -> SubscribeWhen

Disable GroupWorkflow Quad(Description=Quad) => #76
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow "White quad" => #1
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0352242S, Period=PT0S)
    -> Unit => #7
    #0, #7 -> TakeUntil => #8
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.033458S, Period=PT0S)
    -> Unit => #14
    #1, #14 -> TakeUntil => #15
    #8, #15 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #18
    -> WorkflowOutput
    #18 -> PropertyMapping(ColorR, ColorG, ColorB) => #20
    SubscribeSubject Draw2D => #21
    #20, #21 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=155, LocationY=50, Layer=0, Angle=1, ColorR=1, ColorG=1, ColorB=1, ColorA=1)

    Disable PropertyMapping(Ambient)
    -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=0.1
      TranslationY=-0.06
      TranslationZ=0.13
      ScaleX=0.1
      ScaleY=0.15
      ScaleZ=1
      MeshName=cube3d
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
Disable Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #77
#76, #77 -> Disable SubscribeWhen

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuadSubject

GroupWorkflow "Log lick events"(Description="Log lick events")
    ExternalizedMapping(FileName(DisplayName="Lick Performance FileName"))
    -> IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.EventLogger.bonsai, FileName=D:\Data\Masa\Masa2tracks_Lick_Performance.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    ExternalizedMapping(FileName(DisplayName="Reward FileName"))
    -> IncludeWorkflow Reward(Path=BonVision:Logging.EventLogger.bonsai, FileName=D:\Data\Masa\Masa2tracks_Reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    ExternalizedMapping(FileName(DisplayName="Trial info FileName"))
    -> IncludeWorkflow "Trial info"(Path=BonVision:Logging.EventLogger.bonsai, FileName=D:\Data\Masa\Masa2tracks_Trial_info.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    SubscribeSubject "LickState (main)" => #6
    SubscribeSubject "Track ID (main)" => #7
    #6, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #9
    SubscribeSubject "Lap count Track 1" => #10
    #6, #10 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #12
    SubscribeSubject "Lap count Track 2" => #13
    #6, #13 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #15
    SubscribeSubject "MousePos (main)" => #16
    #6, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #18
    SubscribeSubject Timestamp => #19
    #6, #19 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #21
    #6, #21, #9, #12, #15, #18 -> Zip
    -> IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "Correct Lap" => #24
    SubscribeSubject "Lap count Track 1" => #25
    #24, #25 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #27
    SubscribeSubject "Lap count Track 2" => #28
    #24, #28 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #30
    SubscribeSubject "Track 1 Performance" => #31
    #24, #31 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #33
    SubscribeSubject "Track 2 Performance" => #34
    #24, #34 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #36
    SubscribeSubject "MousePos (main)" => #37
    #24, #37 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #39
    SubscribeSubject Timestamp => #40
    #24, #40 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #42
    #24, #42, #27, #30, #33, #36, #39 -> Zip
    -> IncludeWorkflow Reward(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "MousePos (main)"

    GroupWorkflow(Description="archive old logging")
        Disable SubscribeSubject "LickState (main)" => #0
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        Disable SubscribeSubject "Track ID (main)" => #3
        #0, #3 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #5
        Disable SubscribeSubject "Lap count Track 1" => #6
        #0, #6 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #8
        Disable SubscribeSubject "Lap count Track 2" => #9
        #0, #9 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #11
        Disable SubscribeSubject "MousePos (main)" => #12
        #0, #12 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #14
        #0, #2, #5, #8, #11, #14 -> Disable Zip
        -> Disable IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

        Disable SubscribeSubject "Correct Lap" => #17
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
        Disable SubscribeSubject "Lap count Track 1" => #20
        #17, #20 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #22
        Disable SubscribeSubject "Lap count Track 2" => #23
        #17, #23 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #25
        Disable SubscribeSubject "Track 1 Performance" => #26
        #17, #26 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #28
        Disable SubscribeSubject "Track 2 Performance" => #29
        #17, #29 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #31
        Disable SubscribeSubject "MousePos (main)" => #32
        #17, #32 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #34
        #17, #19, #22, #25, #28, #31, #34 -> Disable Zip
        -> Disable IncludeWorkflow Reward(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "Track ID (main)" => #47
    SubscribeSubject Timestamp => #48
    #47, #48 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #50
    SubscribeSubject "Lap count Track 1" => #51
    #47, #51 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #53
    SubscribeSubject "Lap count Track 2" => #54
    #47, #54 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #56
    SubscribeSubject "MousePos (main)" => #57
    #47, #57 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #59
    SubscribeSubject "Learning Type (main)" => #60
    #47, #60 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #62
    #47, #50, #53, #56, #59, #62 -> Zip
    -> Skip(Count=2)
    -> IncludeWorkflow "Trial info"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "Track ID (main)" => #66
    SubscribeSubject Timestamp => #67
    SubscribeSubject "Lap count Track 1" => #68
    SubscribeSubject "Lap count Track 2" => #69
    SubscribeSubject "MousePos (main)" => #70
    SubscribeSubject "Manual reward" => #71
    #71, #66 -> WithLatestFrom => #72
    -> MemberSelector(Selector=Item1) => #73
    #72 -> MemberSelector(Selector=Item2) => #74
    #71, #67 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #76
    #71, #68 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #78
    #71, #69 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #80
    #71, #70 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #82
    #73, #74, #76, #78, #80, #82 -> Zip
    -> Skip(Count=1)
    -> IncludeWorkflow "Manual reward log"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    ExternalizedMapping(FileName(DisplayName="Manual reward FileName"))
    -> IncludeWorkflow "Manual reward log"(Path=BonVision:Logging.EventLogger.bonsai, FileName=D:\Data\Masa\Masa2tracks_Manual_reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

Disable GroupWorkflow ArduinoSerial_New
    Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM6
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame => #2
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #4
    -> MemberSelector(Selector=Item2) => #5
    #4 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #7
    #4 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #9
    #2 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #11
    SubscribeSubject QuadState => #12
    #11, #12 -> WithLatestFrom => #13
    -> MemberSelector(Selector=Item1) => #14
    SubscribeSubject EyeFrameCount => #15
    #14, #15 -> WithLatestFrom => #16
    -> MemberSelector(Selector=Item1) => #17
    #16 -> MemberSelector(Selector=Item2) => #18
    #13 -> MemberSelector(Selector=Item2) => #19
    SubscribeSubject MousePos => #20
    #9, #5, #7, #19, #18, #17, #20 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time, Item7 as Position)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow AnalogOutputs
        Bonsai.IO.CreateSerialPort
          Name=ArduinoAnalog
          PortName=COM14
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #1
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 2:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i) => #3
        -> MemberSelector(Selector=Item2) => #4
        #3 -> MemberSelector(Selector=Item1) => #5
        #1 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #7
        #5, #4, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")

GroupWorkflow Quad(Description=Quad) => #83
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow "White quad" => #1
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0476808S, Period=PT0S)
    -> Unit => #7
    #0, #7 -> TakeUntil => #8
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0469876S, Period=PT0S)
    -> Unit => #14
    #1, #14 -> TakeUntil => #15
    #8, #15 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #18
    -> WorkflowOutput
    #18 -> PropertyMapping(ColorR, ColorG, ColorB) => #20
    SubscribeSubject Draw2D => #21
    #20, #21 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=25
      ExtentY=15
      LocationX=-75
      LocationY=45
      Layer=0
      Angle=0
      ColorR=1
      ColorG=1
      ColorB=1
      ColorA=1

    Disable PropertyMapping(Ambient)
    -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=0.1
      TranslationY=-0.06
      TranslationZ=0.13
      ScaleX=0.1
      ScaleY=0.15
      ScaleZ=1
      MeshName=cube3d
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #84
#83, #84 -> SubscribeWhen

SubscribeSubject Draw3DStim
-> IncludeWorkflow
  Path=BonVision:Primitives.DrawModel.bonsai
  TranslationX=0
  TranslationY=0
  TranslationZ=1
  ScaleX=1000
  ScaleY=2500
  ScaleZ=1
  MeshName=Plane
  Ambient(X=0.25, Y=0.25, Z=0.25)
  Diffuse(X=0, Y=0, Z=0)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=0
  RotationZ=0
  RotationY=0
  RotationX=0

GroupWorkflow "BonVision Initialisation"
    Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Triangles
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Triangles.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=dots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\8914_generated.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=45Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\45Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\135Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_45_6
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid_45_6.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern black 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern black 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern white 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern white 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources => #5
    Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Shift", SuppressRepetitions=false)
    -> Bonsai.Shaders.SampleOnRenderFrame => #7
    #5, #7 -> TakeUntil
    -> WorkflowOutput
