<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArduinoAnalog</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.005S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 2:
    return True
  else:
    return False

</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i\t%i</Pattern>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>ArduinoAnalog</io:Name>
                <io:PortName>COM7</io:PortName>
                <io:BaudRate>250000</io:BaudRate>
                <io:Encoding>utf-8</io:Encoding>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>