WorkflowBuilder(Version=2.7.1)
Bonsai.Shaders.CreateWindow
  Width=1800
  Height=800
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Triangles
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Triangles.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=dots
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\8914_generated.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=45Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\45Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=135Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\135Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid_45_6
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid_45_6.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern black 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern black 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern white 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern white 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> GroupWorkflow FrameEventLoggers
    WorkflowInput Source1 => #0
    Disable ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> Disable IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_WheelLog.csv) => #2
    Disable ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> Disable IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_EyeLog.csv) => #4
    Disable ExternalizedMapping(FileName(DisplayName=TrialParamsFileName)) => #5
    Disable ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #6
    Disable ExternalizedMapping(FileName(DisplayName=saveMousePosName)) => #7
    #4, #7 -> Disable IncludeWorkflow saveMousePos(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_saveMousePos.csv) => #8
    #8, #5 -> Disable IncludeWorkflow TrialEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=ClosedLoop_Trial.csv) => #9
    #9, #6 -> Disable IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_PDAsync.csv) => #10
    Disable ExternalizedMapping(FileName(DisplayName="Lick Performance FileName")) => #11
    #10, #11 -> Disable IncludeWorkflow "Lick Performance"(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_Performance.csv) => #12
    Disable ExternalizedMapping(FileName(DisplayName="Reward FileName")) => #13
    #12, #13 -> Disable IncludeWorkflow Reward(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_Reward.csv)
    -> WorkflowOutput
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #9
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=30)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #13
#9 -> PublishSubject DrawStimuli => #14
#13, #14 -> Sample
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=24, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader(Path=meshmap_py_minus_hires.bin, Offset=0, SampleRate=10000000, ChannelCount=1001, BufferLength=3003, Depth=F32, Layout=RowMajor)
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
#9 -> Bonsai.Shaders.SampleOnUpdateFrame
-> PublishSubject draw

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION.csv, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4,
    double.Parse(it[4]) as item5,
    double.Parse(it[5]) as item6,
    double.Parse(it[6]) as item7,
    double.Parse(it[7]) as item8
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=item2)
    -> BehaviorSubject "Reward Zone Centre Location"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Reward Zone Size"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Track ID"
    #0 -> MemberSelector(Selector=item5)
    -> BehaviorSubject "Lap ID"
    #0 -> MemberSelector(Selector=item6)
    -> BehaviorSubject "Lick Limit"
    #0 -> MemberSelector(Selector=item7)
    -> BehaviorSubject "Learning Type"
    #0 -> MemberSelector(Selector=item8)
    -> BehaviorSubject "GreyScreen Duration"

    GroupWorkflow "Track Trial" => #17
        Bonsai.Shaders.Input.MouseCursor
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #3
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        Disable ExternalizedMapping(Count) => #8
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #10
        #7, #10 -> Add(Operand=DoubleProperty(Value=-1140))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile => #14
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=140))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-1000))
            -> WorkflowOutput
        SubscribeSubject MousePos
        -> Condition => #16
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=30000000, Upper=60000000)
        -> Disable Bonsai.Numerics.Permutation
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(DueTime)
        -> Disable Timer(DueTime=PT4.3992798S, Period=PT0S)
        -> Disable Unit => #22
        Timer(DueTime=PT30S, Period=PT0S) => #23
        #14, #23 -> TakeUntil => #24
        #24, #16 -> SkipUntil
        -> Unit => #26
        #26, #22 -> Disable Concat
        -> Last => #28
        #28, #8 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput

        GroupWorkflow "Check No Early Licks"
            SubscribeSubject LeftLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #4
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=5))
                -> WorkflowOutput
            SubscribeSubject RightLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=5))
                -> WorkflowOutput
            #9, #4 -> Amb
            -> BooleanProperty(Value=true)
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput

            Disable SubscribeSubject LeftLick => #17
            Disable SubscribeSubject RightLick => #18
            Disable SubscribeSubject "Lick Limit"
            -> Disable PropertyMapping(Count) => #20
            #17, #20 -> Disable Skip(Count=4) => #21
            #18, #20 -> Disable Skip(Count=4) => #22
            #21, #22 -> Disable Amb
            -> Disable BooleanProperty(Value=true)
            -> Disable First
            -> Disable Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable Unit
            -> Disable BehaviorSubject AbortTrial
            -> Disable WorkflowOutput

        Disable IntProperty(Value=200)
        -> Disable MulticastSubject MousePos => #33
        Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 A B C D E F G Shift", SuppressRepetitions=false) => #34
        #33, #34 -> Disable SubscribeWhen
        Disable IntProperty(Value=200)
        -> Disable MulticastSubject Startpos => #37
        #37, #34 -> Disable SubscribeWhen

        Disable BehaviorSubject Startpos
    GroupWorkflow "GreyScreen Trial" => #18
        ExternalizedMapping(Value(DisplayName=Gain)) => #0
        Disable ExternalizedMapping(Count) => #1
        SubscribeSubject MousePos
        -> PropertyMapping(Value) => #3
        Bonsai.Shaders.Input.MouseCursor
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #6
        #6, #0 -> Multiply(Operand=DoubleProperty(Value=0))
        -> Accumulate
        -> Condition => #9
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #9, #3 -> Add(Operand=DoubleProperty(Value=-1140)) => #10
        SubscribeSubject MousePos
        -> Condition => #12
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        SubscribeSubject "GreyScreen Duration"
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S, Period=PT0S) => #15
        #10, #15 -> TakeUntil => #16
        #16, #12 -> SkipUntil
        -> Disable SubscribeWhen
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> Unit
        -> Last => #21
        #21, #1 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #17, #18 -> Amb => #19
    SubscribeSubject AbortTrial => #20
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=40000000, Upper=70000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.1274421S, Period=PT0S)
    -> Unit => #26
    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Take(Count=1) => #29
    #20, #29 -> TakeUntil => #30
    #19, #30 -> Merge
    -> First => #32
    #32, #26 -> Concat
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> Last
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        GroupWorkflow Archive
            Disable GroupWorkflow blocker
                SubscribeSubject Draw3DStim => #0
                SubscribeSubject "Blocker X"
                -> PropertyMapping(TranslationX) => #2
                SubscribeSubject "Blocker Rotation X"
                -> PropertyMapping(RotationX) => #4
                SubscribeSubject "Blocker Rotation Y"
                -> PropertyMapping(RotationY) => #6
                #0, #2, #4, #6 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=5
                  TranslationY=1
                  TranslationZ=-1
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  MeshName=Plane
                  Ambient(X=0.25, Y=0.25, Z=0.25)
                  Diffuse(X=0.3, Y=0.3, Z=0.3)
                  Specular(X=0.3, Y=0.3, Z=0.3)
                  SpecularExponent=1
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput

            Disable GroupWorkflow "Track 1 Textures"
                GroupWorkflow "Track 1 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+60
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture1"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+30
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture2"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+50
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture3"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+70
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture4"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+90
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #4
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
                    #3, #5 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #7
                    #7, #5 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #9
                    #9, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Textures"
                GroupWorkflow "Track 2 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 5 Aman original Track"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.977
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 pillar"
                GroupWorkflow "Track 4 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 1"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3100.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2960.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3099.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2959.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 2"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3080.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2940.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3079.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2939.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 3"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3060.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2920.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3059.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2919.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 1 pillar 4"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3040.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #0 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2900.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3039.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #0 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2899.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(TextureName) => #0
                    SubscribeSubject MousePos => #1
                    ExternalizedMapping(Expression) => #2
                    #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #4
                    #4, #0 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #6
                    #6, #0 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ) => #8
                    #8, #0 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #0 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 3 Textures"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 Textures"
                GroupWorkflow "Track 4 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                        ExternalizedMapping(TextureName) => #2
                        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                        #3, #1 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow Backup
                Disable GroupWorkflow "Track 1 Textures"
                    GroupWorkflow "Track 1 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+60
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture1"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+30
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture2"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+50
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture3"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+70
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture4"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+90
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture5"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #4
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
                        #3, #5 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #7
                        #7, #5 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #9
                        #9, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                        #11, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 2 Textures"
                    GroupWorkflow "Track 2 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 5 Aman original Track"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-4
                              TranslationY=2
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.977
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.97
                              TranslationY=2
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.97
                              TranslationY=2
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 pillar"
                    GroupWorkflow "Track 4 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 1"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3100.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2960.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3099.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2959.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 2"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3080.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2940.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3079.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2939.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 3"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3060.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2920.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3059.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2919.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 pillar 4"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #1, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3040.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #0 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2900.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3039.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #0 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2899.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(TextureName) => #0
                        SubscribeSubject MousePos => #1
                        ExternalizedMapping(Expression) => #2
                        #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #4
                        #4, #0 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #6
                        #6, #0 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ) => #8
                        #8, #0 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #0 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 3 Textures"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 Textures"
                    GroupWorkflow "Track 4 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                            ExternalizedMapping(TextureName) => #2
                            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #3
                            #3, #1 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

        GroupWorkflow "Track 2 Right Textures" => #1
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.99
                      TranslationZ=84.575
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.99
                      TranslationZ=84.575
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=84.575
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=-1060
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture1"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=54.5749969
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=54.5749969
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=54.5749969
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1090
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture2"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=74.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=74.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=74.575
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1070
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture3"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=94.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=94.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=94.575
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1050
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture4"
                ExternalizedMapping(TextureName) => #0
                SubscribeSubject MousePos => #1
                ExternalizedMapping(Expression) => #2
                #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #4
                #4, #0 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=114.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #6
                #6, #0 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=114.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ) => #8
                #8, #0 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=114.575
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput
                #3 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #0 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1030
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName=Side)) => #4
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #5
                #3, #5 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=134.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #7
                #7, #5 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=134.575
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #9
                #9, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=134.575
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #4 -> Disable GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-1010
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
        SubscribeSubject Startpos => #2
        -> LessThan(Operand=DoubleProperty(Value=0)) => #3
        #2 -> GreaterThan(Operand=DoubleProperty(Value=-200)) => #4
        #3, #4 -> Zip
        -> Condition => #6
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #1, #6 -> SubscribeWhen

        SubscribeSubject Startpos => #8
        -> LessThan(Operand=DoubleProperty(Value=-1000)) => #9
        #8 -> GreaterThan(Operand=DoubleProperty(Value=-1200)) => #10
        #9, #10 -> Zip
        -> Condition => #12
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        GroupWorkflow "Track 1 Left Textures" => #13
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.99
                      TranslationZ=-70
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.99
                      TranslationZ=-70
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=-60
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=-70
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-110
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-110
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-110
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-70
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-70
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-50
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-70
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-70
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-50
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-30
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-50
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-50
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-30
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-30
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> Disable GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-10
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
                    ExternalizedMapping(TextureName) => #2
                    #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #3
                    #3, #1 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-30
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
        #13, #12 -> SubscribeWhen

    GroupWorkflow "Control and Give Reward"
        GroupWorkflow "Generate Reward Serial String"
            SubscribeSubject RightCorrect
            -> Skip(Count=1) => #1
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> FloatProperty(Value=10) => #3
            #1 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=20))
                -> WorkflowOutput
            -> FloatProperty(Value=50) => #5
            #3, #5 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject RightValveOpenTime

            SubscribeSubject LeftCorrect
            -> Skip(Count=1) => #10
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=10) => #12
            #10 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> FloatProperty(Value=50) => #14
            #12, #14 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject LeftValveOpenTime

            StringProperty(Value=l) => #18
            SubscribeSubject LeftValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
              Expression: it.ToString()
            #18, #22 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject LeftRewardString

            StringProperty(Value=r) => #26
            SubscribeSubject RightValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression: it.ToString()
            #26, #30 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject RightRewardString

        SubscribeSubject LeftCorrect
        -> Disable Take(Count=1) => #2
        SubscribeSubject LeftRewardString
        -> PropertyMapping(Value) => #4
        #2, #4 -> StringProperty(Value=l10) => #5
        Disable SubscribeSubject "Learning Type" => #6
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #8
        #6 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #10
        #8, #10 -> Disable Amb
        -> Disable PropertyMapping(Count) => #12
        #5, #12 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        SubscribeSubject RightCorrect
        -> Disable Take(Count=1) => #17
        SubscribeSubject RightRewardString
        -> PropertyMapping(Value) => #19
        #17, #19 -> StringProperty(Value=r10) => #20
        Disable SubscribeSubject "Learning Type" => #21
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #23
        #21 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #25
        #23, #25 -> Disable Amb
        -> Disable PropertyMapping(Count) => #27
        #20, #27 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        StringProperty
        -> BehaviorSubject SerialToSend

        SubscribeSubject SerialToSend
        -> Skip(Count=1)
        -> Take(Count=1)
        -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r) => #36
        SubscribeSubject "Response Value"
        -> PropertyMapping(Value) => #38
        #36, #38 -> IntProperty(Value=1)
        -> Disable TakeUntil
        -> MulticastSubject "Correct Lap"

        SubscribeSubject LeftValveOpenTime => #42
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #44
        #42 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=50))
            -> WorkflowOutput
        -> IntProperty(Value=10) => #46
        SubscribeSubject RightValveOpenTime => #47
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #49
        #47 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=50))
            -> WorkflowOutput
        -> IntProperty(Value=20) => #51
        #49, #51, #44, #46 -> Amb
        -> BehaviorSubject "Response Value"

    GroupWorkflow "Get Licks"
        Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
        -> Unit => #1
        Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
        -> Unit => #3
        Unit => #4
        #1, #4 -> Merge
        -> BehaviorSubject RightLick
        #3, #4 -> Merge
        -> BehaviorSubject LeftLick

        GroupWorkflow "Check For Recent Licks"
            ExternalizedMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.05S)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #3
            IntProperty(Value=0) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            SubscribeSubject RightLick
            -> IntProperty(Value=2) => #8
            #4, #6, #8 -> Merge
            -> Skip(Count=3)
            -> BehaviorSubject LickState
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #13
            #3, #13 -> CombineLatest
            -> Subtract
            -> Divide(Operand=DoubleProperty(Value=1000))
            -> BehaviorSubject TimeSinceLastLick

    GroupWorkflow "Performance Tracking"
        GroupWorkflow "Active Learning" => #0
            SubscribeSubject LickState
            -> PropertyMapping(Value) => #1
            Source2=#1 -> IntProperty(Value=1)
            -> Skip(Count=1)
            -> Disable First => #4
            GroupWorkflow "Reward zone info"
                SubscribeSubject InsideZone => #0
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #3
                #1, #3 -> IntProperty(Value=1) => #4
                #0 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #6
                #4, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Value) => #6
            #4, #6 -> Equal(Operand=IntProperty(Value=0)) => #7
            -> Condition Correct => #8
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=10)
            -> MulticastSubject LeftCorrect
            #8 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=20)
            -> MulticastSubject RightCorrect
            #7 -> Condition Incorrect => #17
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Incorrect Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject LeftIncorrect
            #17 -> IntProperty(Value=2)
            -> Condition "Incorrect Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject RightIncorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Active" => #2
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #0, #2 -> SubscribeWhen

        GroupWorkflow "Passive Learning" => #4
            SubscribeSubject Entry => #0
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject LeftCorrect
            #0 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject RightCorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Passive" => #6
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen

        GroupWorkflow "Track Reward Zone"
            SubscribeSubject<System.Single> MousePos => #0
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #2
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #4
            SubscribeSubject "Reward Zone Centre Location" => #5
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1045) => #7
            #7, #4 -> Add(Operand=IntProperty(Value=5)) => #8
            -> PropertyMapping(Value) => #9
            #5 -> PropertyMapping(Value)
            -> IntProperty(Value=-1045) => #11
            #11, #2 -> Subtract(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #13
            #0, #13 -> GreaterThan(Operand=FloatProperty(Value=-1050)) => #14
            #9, #0 -> LessThan(Operand=FloatProperty(Value=-1040)) => #15
            #14, #15 -> Zip
            -> LogicalAnd => #17
            -> BehaviorSubject InsideZone
            -> WorkflowOutput
            #17 -> Disable DistinctUntilChanged
            -> Disable Skip(Count=1) => #21
            -> Disable Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=1)
            -> Disable BehaviorSubject Entry
            #21 -> Disable BitwiseNot
            -> Disable Condition Exit
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable BehaviorSubject Exit
            Disable SubscribeSubject "Reward Zone Centre Location"
            -> Disable PropertyMapping(Value)
            -> Disable IntProperty(Value=-1045) => #31
            #31, #8 -> PropertyMapping(Value) => #32
            #0, #32 -> GreaterThan(Operand=FloatProperty(Value=-1040))
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> BehaviorSubject Entry

    Disable GroupWorkflow "Performance Calculation"
        SubscribeSubject LeftCorrect
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate => #3
        SubscribeSubject RightCorrect
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> PropertyMapping(Value) => #8
        #3, #8 -> Add(Operand=IntProperty(Value=6)) => #9
        Disable SubscribeSubject "End of lap" => #10
        SubscribeSubject "Track ID"
        -> PropertyMapping(Value) => #12
        #10, #12 -> IntProperty(Value=2)
        -> TakeWhile "If Track 1 or 2"
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> PropertyMapping(Value) => #17
        #9, #17 -> Divide(Operand=IntProperty(Value=2)) => #18
        Bonsai.Shaders.UpdateFrame
        -> Timestamp => #20
        #18, #20 -> Zip
        -> WorkflowOutput

    SubscribeSubject "Track ID"
    -> MulticastSubject "Track ID (main)"

    SubscribeSubject LickState
    -> MulticastSubject "LickState (main)"

    SubscribeSubject MousePos
    -> MulticastSubject "MousePos (main)"

    SubscribeSubject MousePos
    -> MulticastSubject "MousePos (main)"

    SubscribeSubject "Correct Lap"
    -> MulticastSubject "Correct Lap (main)"
-> Concat
-> BehaviorSubject "End of lap"
-> Disable Last
-> Disable Repeat
-> Disable ElementIndex
-> Disable MemberSelector(Selector=Index)

Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=0, Y=300, Width=1920, Height=480), FrameInterval=100)
-> Bonsai.Shaders.SampleOnRenderFrame
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Crop(RegionOfInterest(X=1895, Y=431, Width=17, Height=30))
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0)
-> LessThanOrEqual(Operand=DoubleProperty(Value=128))
-> BehaviorSubject Quadstate

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    BooleanProperty(Value=false)
    -> BehaviorSubject InsideZone

    IntProperty(Value=1)
    -> BehaviorSubject "Lap ID"

    Disable IntProperty(Value=1)
    -> Disable BehaviorSubject "Lick Limit"

    IntProperty(Value=0)
    -> BehaviorSubject "Track ID (main)"

    IntProperty(Value=0)
    -> BehaviorSubject "LickState (main)"

    GroupWorkflow TrialOutcomes
        IntProperty(Value=0) => #0
        -> BehaviorSubject LeftCorrect
        #0 -> BehaviorSubject RightCorrect
        #0 -> BehaviorSubject NoResponse
        #0 -> BehaviorSubject LeftIncorrect
        #0 -> BehaviorSubject RightIncorrect
        #0 -> BehaviorSubject "Correct Lap"

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    FloatProperty(Value=200)
    -> BehaviorSubject "MousePos (main)"

    IntProperty(Value=0) => #27
    -> BehaviorSubject "Lap count Track 1"
    #27 -> BehaviorSubject "Lap count Track 2"

    FloatProperty(Value=0) => #30
    -> BehaviorSubject "Track 1 Performance"
    #30 -> BehaviorSubject "Track 2 Performance"

    IntProperty(Value=0)
    -> BehaviorSubject "Correct Lap (main)"

    FloatProperty(Value=0)
    -> BehaviorSubject "Total reward volume"

Disable GroupWorkflow "Performance Calculation"
    SubscribeSubject LeftCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=10))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate => #3
    SubscribeSubject RightCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=20))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #8
    #3, #8 -> Add(Operand=IntProperty(Value=1)) => #9
    SubscribeSubject "End of lap" => #10
    SubscribeSubject "Track ID"
    -> PropertyMapping(Value) => #12
    #10, #12 -> IntProperty(Value=1)
    -> TakeWhile "If Track 1 or 2"
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #17
    #9, #17 -> Divide(Operand=IntProperty(Value=1)) => #18
    Bonsai.Shaders.UpdateFrame
    -> Timestamp => #20
    #18, #20 -> Zip
    -> WorkflowOutput

    SubscribeSubject RightCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=20))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate => #26
    SubscribeSubject "End of lap" => #27
    SubscribeSubject "Track ID"
    -> PropertyMapping(Value) => #29
    #27, #29 -> IntProperty(Value=1)
    -> TakeWhile "If Track 2"
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> Disable GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #34
    #34, #26 -> Divide(Operand=IntProperty(Value=1))

SubscribeSubject "Correct Lap" => #42
-> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #45
SubscribeSubject "Track ID (main)" => #46
-> Condition "If Track 1"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 1" => #50
#45, #50 -> CombineLatest
-> Divide
-> MulticastSubject "Track 1 Performance"
#42 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=20))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #56
#46 -> Condition "If Track 2"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 2" => #60
#56, #60 -> CombineLatest
-> Divide
-> MulticastSubject "Track 2 Performance"

ExternalizedMapping(FileName(DisplayName="Lick Performance FileName"))
-> IncludeWorkflow "Lick Performance"
  Path=BonVision:Logging.EventLogger.bonsai
  FileName=test_data\Masa2tracks_Lick_Performance2023-02-02T14_28_40.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp

ExternalizedMapping(FileName(DisplayName="Reward FileName"))
-> IncludeWorkflow Reward(Path=BonVision:Logging.EventLogger.bonsai, FileName=test_data\Masa2tracks_Reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

SubscribeSubject "LickState (main)" => #68
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #70
SubscribeSubject "Track ID (main)" => #71
#68, #71 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #73
SubscribeSubject "Lap count Track 1" => #74
#68, #74 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #76
SubscribeSubject "Lap count Track 2" => #77
#68, #77 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #79
SubscribeSubject "MousePos (main)" => #80
#68, #80 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #82
#68, #70, #73, #76, #79, #82 -> Zip
-> IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

SubscribeSubject "Correct Lap" => #85
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #87
SubscribeSubject "Lap count Track 1" => #88
#85, #88 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #90
SubscribeSubject "Lap count Track 2" => #91
#85, #91 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #93
SubscribeSubject "Track 1 Performance" => #94
#85, #94 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #96
SubscribeSubject "Track 2 Performance" => #97
#85, #97 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #99
SubscribeSubject "MousePos (main)" => #100
#85, #100 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #102
#85, #87, #90, #93, #96, #99, #102 -> Zip
-> IncludeWorkflow Reward(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

SubscribeSubject "Correct Lap" => #105
-> Condition "If Track 1 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #107
#105 -> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #109
#105 -> Condition "If Track 2 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #111
#105 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #113
#107, #109, #111, #113 -> Merge
-> Accumulate
-> MulticastSubject "Total reward volume"

GroupWorkflow Quad(Description=Quad) => #117
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuad
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow "White quad" => #1
        SubscribeSubject DrawQuad
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    SubscribeSubject Draw3DStim => #2
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3.1209647S, Period=PT0S)
    -> Unit => #8
    #0, #8 -> TakeUntil => #9
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT2.0888535S, Period=PT0S)
    -> Unit => #15
    #1, #15 -> TakeUntil => #16
    #9, #16 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #19
    -> WorkflowOutput
    #19 -> PropertyMapping(Ambient) => #21
    #21, #2 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=0.1
      TranslationY=-0.06
      TranslationZ=0.13
      ScaleX=0.1
      ScaleY=0.15
      ScaleZ=1
      MeshName=cube3d
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0
Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #118
#117, #118 -> SubscribeWhen

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuad
